PsychoPy2experiment version="2020.2.8"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Enter participant ID'], expName, expInfo['date'])
  Experiment info = {'Enter participant ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = VSWM_Digit_HF_OE_WCST_PM
  logging level = debug
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Routines
  Routine Introduction
    TextComponent text_14
      letterHeight = 0.05
      pos = (0.0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        In this first task you will see circles light up in order.
        You will use your mouse to click on the circles in reverse order.
        So, you will click the last circle first and the first circle last.
    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent VSWM_start_code
      Code Type = JS
      Begin JS Routine:
        VSWM_clock = new util.Clock();
        VSWM_start = VSWM_clock.getTime();
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  Routine Circles_Example_1
    PolygonComponent init_circle
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_17
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_18
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_19
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_20
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_21
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_22
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_23
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_24
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_25
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_26
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_27
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_28
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_29
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_30
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_31
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    TextComponent For_example
      letterHeight = 0.05
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = For example, if you saw the circles light up in this order:
      wrapWidth = 2
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  Routine Circles_Example_2
    PolygonComponent init_circle_32
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_33
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_34
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent C4_circle_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_36
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_37
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_38
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_39
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_40
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_41
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_42
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_43
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_44
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_45
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_46
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_47
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent For_example_2
      letterHeight = 0.05
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the circles light up in this order:
      wrapWidth = 2
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  Routine Circles_Example_3
    PolygonComponent init_circle_35
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_48
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_49
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_63
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_50
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent circle_6_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_52
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_53
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_54
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_55
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_56
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_57
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_58
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_59
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_60
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_61
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent b_For_example_4_
      letterHeight = 0.05
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the circles light up in this order:
      wrapWidth = 2
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  Routine Circle_Example_5A
    PolygonComponent first_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent first_mouse_response_example
      clickable = first_response_C15_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_first_circle_feedback_2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(first_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            print(clicked_frame)
            clicked_circle=eval(first_mouse_response_example.clicked_name[0])
            print(clicked_circle)
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((first_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            console.log(clicked_frame);
            clicked_circle = eval(first_mouse_response_example.clicked_name[0]);
            console.log(clicked_circle);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor([(- 1.0), (- 1.0), (- 1.0)]);
            continueRoutine = false;
        }
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (0.25, -0.3)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle
      fillColor = $[1,1,1]
      ori = 90
      pos = (0.23, -0.3)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles
      letterHeight = 0.05
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Initial_Circles
    PolygonComponent init_circle_1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    CodeComponent code_33
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Check_outcome
    CodeComponent code_2
      Code Type = JS
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      Before JS Experiment:
        var practice_correct = 0;
      Begin JS Experiment:
        corr = 0;
      Begin JS Routine:
        corr = 0;
        trial_counter = (trial_counter + 1);
        if ((circle_loop === 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        trials_correct = (trials_correct + 1);
                    }
                }
            }
        }
        if ((circle_loop === 4)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            trials_correct = (trials_correct + 1);
                        }
                    }
                }
            }
        }
        if ((circle_loop === 5)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                trials_correct = (trials_correct + 1);
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 6)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    trials_correct = (trials_correct + 1);
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 7)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    if ((seventh_mouse_response.clicked_name[0] === Correct_response_circle7)) {
                                        trials_correct = (trials_correct + 1);
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 8)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    if ((seventh_mouse_response.clicked_name[0] === Correct_response_circle7)) {
                                        if ((eighth_mouse_response.clicked_name[0] === Correct_response_circle8)) {
                                            trials_correct = (trials_correct + 1);
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop > 2)) {
            if (((trial_counter === 2) && (trials_correct === 2))) {
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 2) && (trials_correct === 0))) {
                end_experiment = 1;
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 3) && (trials_correct === 1))) {
                end_experiment = 1;
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 3) && (trials_correct > 1))) {
                Circle_Blocks.finished = true;
            }
        }

        console.log(trials_correct)
        console.log(trial_counter)
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        corr = 1;
                    }
                }
            }
        } else {
            corr = 0;
            }
      End JS Routine:
        console.log(corr)
        console.log(circle_loop)
        if ((corr === 1)) {
            msg = "Correct!";
        } else {
            msg = "Incorrect";
            }

        console.log(msg)

        if ((circle_loop < 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        trials_correct = (trials_correct + 1);
                    }
                }
            }
        }

        console.log(trials_correct)

        if ((circle_loop === 2)) {
            if ((trial_counter === 2) && (trials_correct === 2)) {
                Circle_Blocks.finished = true;
            }
            if ((trial_counter === 4)) {
                Circle_Blocks.finished = true;
            }
        }
  Routine Wait_For_Seventh_Response
    CodeComponent check_loop4_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 6:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 6)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent seventh_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent seventh_mouse_response
      clickable = seventh_response_C1, seventh_response_C2, seventh_response_C3, seventh_response_C4, seventh_response_C5, seventh_response_C6, seventh_response_C7, seventh_response_C8, seventh_response_C9, seventh_response_C10, seventh_response_C11, seventh_response_C12, seventh_response_C13, seventh_response_C14, seventh_response_C15, seventh_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_b_circle_feedback_5__2__3_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(seventh_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(seventh_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((seventh_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(seventh_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Update_loop
    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        circle_loop = 0;
      Begin JS Routine:
        circle_loop = (circle_loop + 1);
        trial_counter = 0;
        trials_correct = 0;

        console.log(circle_loop)
        console.log(trial_counter)
        console.log(trials_correct)
      End JS Routine:
        console.log(circle_loop)
        console.log(trial_counter)
        console.log(trials_correct)
  Routine Third_Circle_Presentation
    PolygonComponent third_circle_pres_C1
      fillColor [set every repeat] = $circle1color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C2
      fillColor [set every repeat] = $circle2color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C3
      fillColor [set every repeat] = $circle3color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C4
      fillColor [set every repeat] = $circle4color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C5
      fillColor [set every repeat] = $circle5color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C6
      fillColor [set every repeat] = $circle6color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C7
      fillColor [set every repeat] = $circle7color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C8
      fillColor [set every repeat] = $circle8color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C9
      fillColor [set every repeat] = $circle9color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C10
      fillColor [set every repeat] = $circle10color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C11
      fillColor [set every repeat] = $circle11color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C12
      fillColor [set every repeat] = $circle12color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C13
      fillColor [set every repeat] = $circle13color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C14
      fillColor [set every repeat] = $circle14color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C15
      fillColor [set every repeat] = $circle15color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C16
      fillColor [set every repeat] = $circle16color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_36
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Wait_for_Fourth_Response
    CodeComponent check_loop1_B
      Code Type = JS
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      Each JS Frame:
        if ((circle_loop > 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fourth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent fourth_mouse_response
      clickable = fourth_response_C1, fourth_response_C2, fourth_response_C3, fourth_response_C4, fourth_response_C5, fourth_response_C6, fourth_response_C7, fourth_response_C8, fourth_response_C9, fourth_response_C10, fourth_response_C11, fourth_response_C12, fourth_response_C13, fourth_response_C14, fourth_response_C15, fourth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_circle_feedback_5_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(fourth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(fourth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((fourth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(fourth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Welcome
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent experiment_done_code
      Code Type = JS
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      Before JS Experiment:
        //var stroop_schedule = ['Stroop_Stim_Schedule_1.xlsx','Stroop_Stim_Schedule_4.xlsx','Stroop_Stim_Schedule_5.xlsx', 'Stroop_Stim_Schedule_8.xlsx','Stroop_Stim_Schedule_11.xlsx'];
        //var x1 = '';
        //var x2 = '';
        //var x3 = '';

        var myBrowser;
        var sUsrAg;
        var nIdx;
        var beginning_exp = '';
        var timer = '';
        var timer_exp = '';
        var beginning_exp = '';
        var beginning_exp2 = '';
        function getBrowserId () {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        myBrowser = getBrowserId();
      Begin JS Experiment:
        //x3 = expInfo["Enter participant ID"];
        //console.log(x3)
        //x2 = parseInt(x3.substr(-2));
        //console.log(x2)
        //x1 = parseInt(x2%5);
        //console.log(x1)

        //if (isNaN(x1)) {
        //  psychoJS.quit()
        //}

        end_experiment = 0;
        timer = new util.Clock();
        timer_exp = new util.Clock();
        beginning_exp = timer.getTime();
        beginning_exp2 = timer_exp.getTime();
        psychoJS.experiment.addData("Browser", myBrowser)
  Routine Fifth_Circle_Presentation
    CodeComponent check_loop2
      Code Type = Both
      Begin Routine:
        if circle_loop > 4:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 4)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fifth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Fourth_Circle_Presentation
    CodeComponent check_loop1
      Code Type = JS
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      Each JS Frame:
        if ((circle_loop > 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fourth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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
  Routine Wait_for_Third_Response
    PolygonComponent third_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent third_mouse_response
      clickable = third_response_C1, third_response_C2, third_response_C3, third_response_C4, third_response_C5, third_response_C6, third_response_C7, third_response_C8, third_response_C9, third_response_C10, third_response_C11, third_response_C12, third_response_C13, third_response_C14, third_response_C15, third_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent third_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        if (((third_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(third_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Circle_Example_6
    PolygonComponent second_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent second_mouse_response_example
      clickable = second_response_C6_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent second_circle_feedback_2
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(second_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(second_mouse_response_example.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((second_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(second_mouse_response_example.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([-1, -1, -1]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (-0.05, 0.1)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle_2
      fillColor = $[1,1,1]
      ori = 90
      pos = (-0.07, 0.1)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles_2
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Circle_Example_7
    PolygonComponent third_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent third_mouse_response_example
      clickable = third_response_C4_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_third_circle_feedback_2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(third_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(third_mouse_response_example.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((third_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(third_mouse_response_example.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([-1, -1, -1]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (0.55, 0.3)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle_3
      fillColor = $[1,1,1]
      ori = 90
      pos = (0.53, 0.3)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles_3
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Circle_Example_4
    PolygonComponent init_circle_51
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_62
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_64
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_65
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_66
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_80
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_67
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_68
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_69
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_70
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_71
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_72
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_73
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_74
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent circle_15_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_76
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent For_example_5
      letterHeight = 0.05
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the circles light up in this order:
      wrapWidth = 2
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  Routine Second_Circle_Presentation
    PolygonComponent second_circle_pres_C1
      fillColor [set every repeat] = $circle1color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C2
      fillColor [set every repeat] = $circle2color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C3
      fillColor [set every repeat] = $circle3color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C4
      fillColor [set every repeat] = $circle4color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C5
      fillColor [set every repeat] = $circle5color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C6
      fillColor [set every repeat] = $circle6color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C7
      fillColor [set every repeat] = $circle7color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C8
      fillColor [set every repeat] = $circle8color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C9
      fillColor [set every repeat] = $circle9color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C10
      fillColor [set every repeat] = $circle10color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C11
      fillColor [set every repeat] = $circle11color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C12
      fillColor [set every repeat] = $circle12color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C13
      fillColor [set every repeat] = $circle13color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C14
      fillColor [set every repeat] = $circle14color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C15
      fillColor [set every repeat] = $circle15color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C16
      fillColor [set every repeat] = $circle16color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_35
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine check_end_experiment
    CodeComponent check_if_experiment_done
      Code Type = Both
      Begin Experiment:
        end_experiment=0
      Begin JS Experiment:
        end_experiment = 0;
      Begin JS Routine:
        if ((end_experiment === 1)) {
            Meta_Loop.finished = true;
        }
      Begin Routine:
        if end_experiment==1:
            Meta_Loop.finished=True
  Routine Blank_Screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Wait_for_Fifth_Response
    CodeComponent check_loop2_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 4:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 4)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fifth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent fifth_mouse_response
      clickable = fifth_response_C1, fifth_response_C2, fifth_response_C3, fifth_response_C4, fifth_response_C5, fifth_response_C6, fifth_response_C7, fifth_response_C8, fifth_response_C9, fifth_response_C10, fifth_response_C11, fifth_response_C12, fifth_response_C13, fifth_response_C14, fifth_response_C15, fifth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_circle_feedback_5__2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(fifth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(fifth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((fifth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(fifth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
  Routine First_Circle_Presentation
    PolygonComponent first_circle_pres_C1
      fillColor [set every repeat] = $circle1color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C2
      fillColor [set every repeat] = $circle2color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C3
      fillColor [set every repeat] = $circle3color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C4
      fillColor [set every repeat] = $circle4color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C5
      fillColor [set every repeat] = $circle5color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C6
      fillColor [set every repeat] = $circle6color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C7
      fillColor [set every repeat] = $circle7color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C8
      fillColor [set every repeat] = $circle8color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C9
      fillColor [set every repeat] = $circle9color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C10
      fillColor [set every repeat] = $circle10color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C11
      fillColor [set every repeat] = $circle11color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C12
      fillColor [set every repeat] = $circle12color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C13
      fillColor [set every repeat] = $circle13color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C14
      fillColor [set every repeat] = $circle14color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C15
      fillColor [set every repeat] = $circle15color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C16
      fillColor [set every repeat] = $circle16color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_34
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Sixth_Circle_Presentation
    CodeComponent check_loop3
      Code Type = Both
      Begin Routine:
        if circle_loop > 5:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 5)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent sixth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Wait_for_Second_response
    PolygonComponent second_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent second_mouse_response
      clickable = second_response_C1, second_response_C2, second_response_C3, second_response_C4, second_response_C5, second_response_C6, second_response_C7, second_response_C8, second_response_C9, second_response_C10, second_response_C11, second_response_C12, second_response_C13, second_response_C14, second_response_C15, second_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent second_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
        if (((second_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(second_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Start_Practice
    TextComponent practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let’s practice.
      wrapWidth = 1.8
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    TextComponent spacebar_text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
      wrapWidth = 1.8
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Wait_for_First_response
    PolygonComponent first_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent first_mouse_response
      clickable = first_response_C1, first_response_C2, first_response_C3, first_response_C4, first_response_C5, first_response_C6, first_response_C7, first_response_C8, first_response_C9, first_response_C10, first_response_C11, first_response_C12, first_response_C13, first_response_C14, first_response_C15, first_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent first_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        if (((first_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(first_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Get_Experimenter
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you! This is the end of the first task.
    TextComponent b_text_15_
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 0.8
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    CodeComponent VSWM_end_code
      Code Type = JS
      End JS Routine:
        VSWM_duration = VSWM_clock.getTime() - VSWM_start;
        psychoJS.experiment.addData('VSWM_duration',  VSWM_duration);
  Routine Check_practice_over
    CodeComponent code_3
      Code Type = JS
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      Each JS Frame:
        console.log(circle_loop)
        if (circle_loop == 3) {
            console.log(circle_loop);
            console.log("this is not working");
            continueRoutine = true;
        } else {
            console.log(circle_loop);
            console.log("maybe");
            continueRoutine = false;
        }
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You'll now start the game. 
      wrapWidth = 1.8
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent mouse_click_text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
      wrapWidth = 1.8
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  Routine Eighth_Circle_Presentation
    CodeComponent check_loop7
      Code Type = Both
      Begin Routine:
        if circle_loop > 7:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 7)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent eighth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Wait_For_Eighth_Response
    CodeComponent check_loop7_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 7:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 7)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent eighth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent eighth_mouse_response
      clickable = eighth_response_C1, eighth_response_C2, eighth_response_C3, eighth_response_C4, eighth_response_C5, eighth_response_C6, eighth_response_C7, eighth_response_C8, eighth_response_C9, eighth_response_C10, eighth_response_C11, eighth_response_C12, eighth_response_C13, eighth_response_C14, eighth_response_C15, eighth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent circle_feedback_8
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(eighth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(eighth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((eighth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(eighth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Wait_For_Sixth_Response
    CodeComponent check_loop3_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 5:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 5)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent sixth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent sixth_mouse_response
      clickable = sixth_response_C1, sixth_response_C2, sixth_response_C3, sixth_response_C4, sixth_response_C5, sixth_response_C6, sixth_response_C7, sixth_response_C8, sixth_response_C9, sixth_response_C10, sixth_response_C11, sixth_response_C12, sixth_response_C13, sixth_response_C14, sixth_response_C15, sixth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_circle_feedback_5__2__2
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(sixth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(sixth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((sixth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(sixth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Seventh_Circle_Presentation
    CodeComponent check_loop4
      Code Type = Both
      Begin Routine:
        if circle_loop > 6:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 6)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent seventh_circle_pres_C1
      fillColor [set every repeat] = $circle1color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C2
      fillColor [set every repeat] = $circle2color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C3
      fillColor [set every repeat] = $circle3color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C4
      fillColor [set every repeat] = $circle4color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C5
      fillColor [set every repeat] = $circle5color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C6
      fillColor [set every repeat] = $circle6color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C7
      fillColor [set every repeat] = $circle7color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C8
      fillColor [set every repeat] = $circle8color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C9
      fillColor [set every repeat] = $circle9color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C10
      fillColor [set every repeat] = $circle10color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C11
      fillColor [set every repeat] = $circle11color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C12
      fillColor [set every repeat] = $circle12color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C13
      fillColor [set every repeat] = $circle13color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C14
      fillColor [set every repeat] = $circle14color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C15
      fillColor [set every repeat] = $circle15color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C16
      fillColor [set every repeat] = $circle16color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Repeat_Instructions
    TextComponent repeat_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember!

        Your job is to use the mouse to click on the circles in backwards order.
    CodeComponent code_4
      Code Type = JS
      Each JS Frame:
        console.log(trials_correct)
        console.log(trial_counter)
        if ((circle_loop < 3)) {
            if ((trial_counter < 2)) {
                continueRoutine = false;
            } else if ((trial_counter === 2)) {
                if (trials_correct ===2){
                    continueRoutine = false;
                    practice_correct = 1;
                    }
                else {
                    continueRoutine = true;
                    }
            } else if ((trial_counter === 3)) {
                continueRoutine = false;
            } else if ((trial_counter === 4) && (trials_correct > 2)) {
                continueRoutine = false;
            } else {
                continueRoutine = false;
                }
        }else {
            continueRoutine = false;
        }

        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        console.log(practice_correct);
    KeyboardComponent key_resp
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press space bar to continue.
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  Routine feedback
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    CodeComponent code_5
      Code Type = JS
      Begin JS Experiment:
        msg = '';
      Each JS Frame:
        if ((circle_loop < 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }

        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next task, you will see numbers on the screen one after another.

        When you see the "Recall" screen, type the numbers you saw in reverse order and press enter. Backspace will not work.

        Do your best to remember the numbers and do not cheat.

        Press the space bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_digit_code
      Code Type = JS
      Begin JS Experiment:
        trial_counter = 0;
        condition_counter = 0;
      Begin JS Routine:
        Digit_clock = new util.Clock();
        Digit_start = Digit_clock.getTime();
  Routine get_ready
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let’s practice!
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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  Routine code_meta
    CodeComponent code_7
      Code Type = JS
  Routine Presentation_practice
    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ■
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    TextComponent pres_text_2
      letterHeight = 0.13
      startVal [time (s)] = 1
      text = a
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    CodeComponent pres_code_2
      Code Type = Both
      Begin JS Routine:
        // Convert sequence to list
        var output = [],
            sNumber = digits.toString();

        for (var i = 0, len = sNumber.length; i < len; i += 1) {
            output.push(+sNumber.charAt(i));
        }

        nList = digits.toString().split('').map((i)=>Number(i))
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text_2.text = nList[i]
      Each JS Frame:
        // Convert time ti a list index
        i = Math.floor(t-1);
        // console.log(i)
        // console.log(nList.length)
        // console.log(fixation_2)
        // console.log(pres_text_2.text)
        // pres_text_2.text = 'a'
        // console.log(pres_text_2.text)

        // Index current number in the list
        // or end routine if all numbers presented
        if (i === nList.length) {
            continueRoutine = false;
        } else if (i < 0){
            pres_text_2.text = ' '
        } else {
            console.log(pres_text_2.text)
            pres_text_2.text = nList[i]
        }
  Routine Recall_practice
    TextComponent recall_text_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys_2
      Code Type = JS
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      Begin JS Experiment:
        // Store responses
        allResponses_p = []
        current_resp = '';
      Begin JS Routine:
        n = 0;
        modify = false;
        textAdd = '';
        pts_response_2.text = '';
        current_resp = '';
        console.log(pts_response_2.text)
        console.log(current_resp)
        if (pts_response_2.text === 'space'){
            pts_response_2.text = '';
            }
      Each JS Frame:
        console.log(current_resp)
        console.log(pts_response_2.text)
        console.log(n)


        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
         }

        if (n < 1){
            textAdd = ''
        }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pts_response_2.text = pts_response_2.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
                modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                pts_response_2.text = pts_response_2.text + textAdd.toUpperCase();
                modify = false;
            } else {
                pts_response_2.text = pts_response_2.text + textAdd
            }
            textAdd = undefined;
        }


        current_resp = pts_response_2.text
        n = n + 1
        console.log(n)
      End JS Routine:
        correct = 0;

        if (Number(current_resp) === digits_corr) {
            correct = 1;
            msg = "Correct";
            msg_color = 'green';
            psychoJS.experiment.addData("correct", correct)
        } else {
            msg = "Incorrect";
            msg_color = 'red';
            psychoJS.experiment.addData("Incorrect", correct)
        }
        psychoJS.experiment.addData("response", current_resp);

        allResponses_p.push(correct)
        pts_response_2.text = '';

        console.log(allResponses_p)
    TextComponent pts_response_2
      letterHeight = 0.13
      startVal [time (s)] = 0
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  Routine feedback_practice
    CodeComponent feedback_code_2
      Code Type = JS
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    TextComponent text_8
      color [set every repeat] = $msg_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine code_end
    CodeComponent code_8
      Code Type = JS
      Begin JS Routine:
        console.log(allResponses_p)

        if (allResponses_p.length === 2 && allResponses_p.slice(-2).reduce((a,b)=>a+b) > 1) {
            trials_2.finished = true;
        } else if (allResponses_p.length === 2 && allResponses_p.slice(-2).reduce((a,b)=>a+b) < 2) {
            //trials.finished = true;
            allResponses_p = [];
            condition_counter = condition_counter + 1
        }

        console.log(allResponses_p)
  Routine repeat_instructions
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Remember that your job is to type the numbers you saw in the opposite order you saw them
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    CodeComponent code_9
      Code Type = JS
      Each JS Frame:
        console.log(condition_counter);
        console.log(allResponses_p.length);

        if (condition_counter === 0) {
            continueRoutine = false;
        } else if (condition_counter > 1){
            continueRoutine = false;
            } else if (condition_counter === 1 && allResponses_p.length < 2){
                continueRoutine = true;
                }else if (condition_counter === 1 && allResponses_p.slice(-2).reduce((a,b)=>a+b) > 1){
                    continueRoutine = false;
                    } else if (key_resp_6.keys === 'space') {
                        continueRoutine = false;
                        }
    KeyboardComponent key_resp_6
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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  Routine real_trials
    TextComponent get_ready_real_trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Great! Let’s play for real now.
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    TextComponent press_space
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ■
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    TextComponent pres_text
      letterHeight = 0.13
      startVal [time (s)] = 1
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    CodeComponent pres_code
      Code Type = Both
      Begin JS Routine:
        // Convert sequence to list
        nList = digits.toString().split('').map((i)=>Number(i))
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text.text = nList[i]
      Each JS Frame:
        // Convert time ti a list index
        i = Math.floor(t-1);

        // Index current number in the list
        // or end routine if all numbers presented

        if (i === nList.length) {
            continueRoutine = false;
        } else if (i < 0){
            pres_text.text = ' '
        } else {
            pres_text.text = nList[i]
        }
      End JS Routine:
        pres_text.text = ''
  Routine Recall
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys
      Code Type = JS
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      Begin JS Experiment:
        // Store responses
        allResponses = []
        current_resp = ' ';
      Begin JS Routine:
        nn = 0;
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }

        if (nn < 1){
            textAdd = '';
        }



        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pts_response.text = pts_response.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
                modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                pts_response.text = pts_response.text + textAdd.toUpperCase();
                modify = false;
            } else {
                pts_response.text = pts_response.text + textAdd
            }
            textAdd = undefined;
        }

        nn = nn + 1;
        current_resp = pts_response.text
      End JS Routine:
        correct = 0;

        if (Number(current_resp) === digits_corr) {
            correct = 1;
            msg = "Correct";
            msg_color = 'green';
            psychoJS.experiment.addData("correct", correct)
        } else {
            msg = "Incorrect";
            msg_color = 'red';
            psychoJS.experiment.addData("Incorrect", correct)
        }
        psychoJS.experiment.addData("response", current_resp);

        allResponses.push(correct)
        pts_response.text = '';
    TextComponent pts_response
      letterHeight = 0.13
      startVal [time (s)] = 0
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  Routine Feedback
    CodeComponent feedback_code
      Code Type = JS
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      End JS Routine:
        // Original logic:
        // for incorrect, check that two responses exist
        // and that their sum of last two responses is zero


        //Changing logic from original code
        //Now, when allResponses == 2
        //If sum of the 2 responses == 0, end experiment
        //If sum of the 2 responses is > 0 (i.e., 1 or 2), then keep going with the experiment

        console.log(allResponses.length);
        if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 2) {
            trials.finished = true;
            allResponses = [];
        } else if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 0) {
            trials.finished = true;
            blocks.finished = true;
        } else if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 1) {
            trials.finished = false;
        } else if (allResponses.length === 3 && allResponses.slice(-2).reduce((a,b)=>a+b) === 2) {
            trials.finished = true;
            allResponses = [];
        } else if (allResponses.length === 3 && allResponses.slice(-2).reduce((a,b)=>a+b) < 2) {
            trials.finished = true;
            blocks.finished = true;
            }

        //var sum = 0;
        //for (var i = 0; i < allResponses.length; i++){
        //  sum += allResponses[i];
        //}

        //if (allResponses.length === 2 && sum === 0) {
        //    trials.finished = true;
        //    blocks.finished = true;
        //} else if (allResponses.length === 2 && sum > 0) {
        //    //trials.finished = true;
        //    allResponses = [];
        //}
  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you! This is the end of the second task.
    TextComponent before_closing
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = .8
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    CodeComponent end_digit_code
      Code Type = JS
      End JS Routine:
        Digit_duration = Digit_clock.getTime() - Digit_start;
        psychoJS.experiment.addData('Digit_duration',  Digit_duration);
  Routine Welcome_2
    PolygonComponent white_background_10
      fillColor = $[1,1,1]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent text_15
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_17
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_HF_code
      Code Type = JS
      Begin JS Routine:
        HF_clock = new util.Clock();
        HF_start = HF_clock.getTime();
  Routine IntroA_2
    PolygonComponent white_background_25
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image = heart_only.jpg
      interpolate = nearest
      pos = (0, -0.0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 256
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    TextComponent text_40
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this part of the task, you will see hearts.
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    TextComponent text_46
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue. 
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine IntroB_2
    PolygonComponent white_background_21
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You will see a heart on the left or right side and you will press the button on the same side as the heart.

        If the heart is on the right, press ‘m’, and if the heart is on the left, press ‘z’.
    TextComponent text_53
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue. 
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Example1
    PolygonComponent white_background_14
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the heart is on the right.
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    ImageComponent image_3
      image = rightHeart.jpg
      interpolate = nearest
      pos = (0,-0.0)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_60
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'm'
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  Routine Example2
    PolygonComponent white_background_12
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the heart is on the left.
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    ImageComponent image_4
      image = leftHeart.jpg
      interpolate = nearest
      pos = (0, -0.0)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_61
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z'
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  Routine Quick_Reminder
    PolygonComponent white_background_19
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_71
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The hearts will dissapear after a short time.

        Try to press the correct key as fast as you can!
    KeyboardComponent key_resp_32
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_72
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_congruent
    PolygonComponent white_background_7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice!
    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue. 
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    KeyboardComponent key_resp_13
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_trial_congruent
    PolygonComponent white_background_17
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_22
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_64
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_5
      image [set every repeat] = $Heart
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_14
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_10
      Code Type = JS
      Begin JS Routine:
        var color_msg_incongruent01;
        var msg_incongruent01;
      End JS Routine:
          if (key_resp_14.keys === undefined) {
              msg_incongruent01 = 'No response'
              color_msg_incongruent01 = 'black'
              } else {
              if (key_resp_14.corr > 0){
                  msg_incongruent01 = 'Correct'
                  color_msg_incongruent01 = 'green'
              } else {
                  msg_incongruent01 = 'Incorrect'
                  color_msg_incongruent01 = 'red'
              }
              }
  Routine feedback_hf_congruent_1
    PolygonComponent white_background_33
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_108
      color [set every repeat] = $color_msg_incongruent01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent01
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  Routine congruent_reminder
    PolygonComponent white_background_41
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_102
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Remember, will see a heart on the left or right side and you will press the button on the same side as the heart.

        If the heart is on the right, press ‘m’, and if the heart is on the left, press ‘z’.
    TextComponent text_103
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_17
      Code Type = JS
      Begin JS Experiment:
        var eachResp;
        eachResp=0;
      Begin JS Routine:
        nCorrhf01 = 0;
        console.log("hf_congruent02")
        console.log(nCorrhf01)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_14.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf01 += psychoJS.experiment._trialsData[eachResp]['key_resp_14.corr'];
            }
          }


        console.log("hf_congruent02")
        console.log(nCorrhf01)
      Each JS Frame:
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_37.keys === 'space') {
            continueRoutine = false;
            }
        else {
            console.log("false")
            continueRoutine = true;
            }
  Routine Practice_trial_congruent_2
    PolygonComponent white_background_32
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_93
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_94
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_13
      image [set every repeat] = $Heart
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_95
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_21
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_11
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent02;
        var color_msg_incongruent02;

        console.log("hf_congruent02")
        console.log(nCorrhf01)
      Each JS Frame:
        var msg_incongruent02;
        var color_msg_incongruent02;

        console.log("hf_congruent02")
        console.log(nCorrhf01)
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_21.keys === undefined) {
              msg_incongruent02 = 'No Response'
              color_msg_incongruent02 = 'black'
              } else {
              if (key_resp_21.corr > 0){
                  msg_incongruent02 = 'Correct'
                  color_msg_incongruent02 = 'green'
              } else {
                  msg_incongruent02 = 'Incorrect'
                  color_msg_incongruent02 = 'red'
              }
              }
  Routine feedback_hf_congruent_2
    PolygonComponent white_background_34
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_114
      color [set every repeat] = $color_msg_incongruent02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent02
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    CodeComponent code_18
      Code Type = JS
      Each JS Frame:
        console.log("hf_congruent02")
        console.log(nCorrhf01)
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready
    PolygonComponent white_background_30
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.

        Remember, if the heart is on the left, press 'z' and if the heart is on the right, press 'm.'
    KeyboardComponent key_resp_15
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Hearts
    PolygonComponent white_background_6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_23
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_65
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent hearts
      image [set every repeat] = $Hearts
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent heart_resp
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine IntroA_3
    PolygonComponent white_background_26
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Great! In the next part of this task, you will see flowers.
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_33
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    ImageComponent image_12
      image = flower_only.jpg
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine IntroB_3
    PolygonComponent white_background_20
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_47
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You will see a flower on the left or right and you will press the button on the opposite side of the flower.

        If the flower is on the right, press 'z,' and if the flower is on the left, press 'm.'
    TextComponent text_34
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example3
    PolygonComponent white_background_13
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_35
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the flower is on the right.
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    ImageComponent image_6
      image = rightFlower.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_62
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z'
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  Routine Example4
    PolygonComponent white_background_11
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_36
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the flower is on the left.
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    ImageComponent image_7
      image = leftFlower.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_19
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_63
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'm'
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  Routine Quick_Reminder_Incongruent
    PolygonComponent white_background_28
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_75
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The flowers will dissapear after a short time.

        Try to press the correct key as fast as you can!
    KeyboardComponent key_resp_34
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_76
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_Incongruent
    PolygonComponent white_background_8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_37
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice!
    TextComponent text_38
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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    KeyboardComponent key_resp_20
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_trial_incongruent
    PolygonComponent white_background_22
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_39
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_66
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_8
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_48
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_22
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_12
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent01;
        var color_msg_incongruent01;
      End JS Routine:
          if (key_resp_22.keys === undefined) {
              msg_incongruent01 = 'No Response'
              color_msg_incongruent01 = 'black'
              } else {
              if (key_resp_22.corr > 0){
                  msg_incongruent01 = 'Correct'
                  color_msg_incongruent01 = 'green'
              } else {
                  msg_incongruent01 = 'Incorrect'
                  color_msg_incongruent01 = 'red'
              }
              }
  Routine feedback_hf_incongruent_1
    PolygonComponent white_background_38
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_113
      color [set every repeat] = $color_msg_incongruent01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent01
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  Routine incongruent_reminder
    PolygonComponent white_background_42
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_104
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Remember, you will see a flower on the left or right and you will press the button on the opposite side as the flower.

        If the flower is on the right, press 'z,' and if the flower is on the left, press 'm.'
    TextComponent text_105
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_38
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = JS
      Begin JS Experiment:
        var nCorrhf02;
      Begin JS Routine:
        nCorrhf02 = 0;
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_22.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf02 += psychoJS.experiment._trialsData[eachResp]['key_resp_22.corr'];
            }
          }
      Each JS Frame:
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_38.keys === 'space') {
            continueRoutine = false; // until we're told otherwise
                }
        else {
            console.log("false")
            continueRoutine = true;
            }
      End JS Routine:
        if (key_resp_38.keys === 'space') {
            continueRoutine = false; // until we're told otherwise
                }
  Routine Practice_trial_incongruent_2
    PolygonComponent white_background_35
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_96
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_97
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_14
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_98
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_23
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_13
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent02;
        var color_msg_incongruent02 ;

        console.log("hf_incongruent02")
        console.log(nCorrhf02)
      Each JS Frame:
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_23.keys === undefined) {
              msg_incongruent02 = 'No Response'
              color_msg_incongruent02 = 'black'
              } else {
              if (key_resp_23.corr > 0){
                  msg_incongruent02 = 'Correct'
                  color_msg_incongruent02 = 'green'
              } else {
                  msg_incongruent02 = 'Incorrect'
                  color_msg_incongruent02 = 'red'
              }
              }
  Routine feedback_hf_incongruent_2
    PolygonComponent white_background_37
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_112
      color [set every repeat] = $color_msg_incongruent02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent02
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    CodeComponent code_20
      Code Type = JS
      Begin JS Routine:
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
      Each JS Frame:
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready2
    PolygonComponent white_background_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_49
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.


        Remember, when the flower is on the left, press 'm,' and when the flower is on the right, press 'z.'
    TextComponent text_50
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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    KeyboardComponent key_resp_24
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Flowers
    PolygonComponent white_background_16
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_51
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_67
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_25
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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
  Routine IntroB_5
    PolygonComponent white_background_18
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_57
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great! In the last part of the task, you'll see hearts and flowers. 
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    TextComponent text_58
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroC_11
    PolygonComponent white_background_23
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_69
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        If you see a heart, press the button on the SAME side as the heart.

        If the heart is on the right, press 'm,' and if the heart is on the left, press 'z.'
    TextComponent text_70
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroC_2
    PolygonComponent white_background_24
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you see a flower, press the button on the OPPOSITE side.


        If the flower is on the right, press 'z,' and if the flower is on the left, press 'm.'
    TextComponent text_74
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press the space bar to continue.
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Quick_Reminder_Mixed
    PolygonComponent white_background_29
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_77
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The hearts and flowers will dissapear after a short time.

        Try to press the correct key as fast as you can!
    KeyboardComponent key_resp_33
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_78
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_mixed
    PolygonComponent white_background_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let's practice!
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    KeyboardComponent key_resp_35
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_80
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_trial_mixed
    PolygonComponent white_background_15
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_81
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_82
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_9
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_83
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_36
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_14
      Code Type = JS
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      Begin JS Routine:
        var msg_mixed01;
        var color_msg_mixed01;
      End JS Routine:
          if (key_resp_36.keys === undefined) {
              msg_mixed01 = 'No response'
              color_msg_mixed01 = 'black'
              } else {
              if (key_resp_36.corr > 0){
                  msg_mixed01 = 'Correct'
                  color_msg_mixed01 = 'green'
              } else {
                  msg_mixed01 = 'Incorrect'
                  color_msg_mixed01 = 'red'
              }
              }
  Routine feedback_hf_mixed_1
    PolygonComponent white_background_39
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_110
      color [set every repeat] = $color_msg_mixed01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_mixed01
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  Routine reminder_mixed
    PolygonComponent white_background_43
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_106
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Remember, if you see a heart, press the button on the SAME side as the heart.

        If you see a flower, press the button on the OPPOSITE side of the flower.
    TextComponent text_107
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_39
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = JS
      Begin JS Experiment:
        var nCorrhf03;
      Begin JS Routine:
        nCorrhf03 = 0;
        console.log("hf_mixed03")
        console.log(nCorrhf03)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_36.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf03 += psychoJS.experiment._trialsData[eachResp]['key_resp_36.corr'];
            }
          }
      Each JS Frame:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_39.keys === 'space') {
                continueRoutine = false;
                }
        else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Practice_trial_mixed_2
    PolygonComponent white_background_36
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_99
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_100
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_15
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_101
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_40
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_15
      Code Type = JS
      Begin JS Routine:
        var color_msg_mixed02;
        var msg_mixed02;
      Each JS Frame:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_40.keys === undefined) {
              msg_mixed02 = 'No response'
              color_msg_mixed02 = 'black'
              } else {
              if (key_resp_40.corr > 0){
                  msg_mixed02 = 'Correct'
                  color_msg_mixed02 = 'green'
              } else {
                  msg_mixed02 = 'Incorrect'
                  color_msg_mixed02 = 'red'
              }
              }
  Routine feedback_hf_mixed_2
    PolygonComponent white_background_40
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_109
      color [set every repeat] = $color_msg_mixed02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_mixed02
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    CodeComponent code_22
      Code Type = JS
      Begin JS Routine:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
      Each JS Frame:
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready3
    PolygonComponent white_background_4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_84
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.


        Remember, press the button on the SAME side as the heart.


        And press the button on the OPPOSITE side of the flower.
    KeyboardComponent key_resp_41
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_85
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue. 
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  Routine mixed_first
    PolygonComponent white_background_9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_86
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_87
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_10
      image = rightHeart.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_88
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_42
      allowedKeys = 'z','m'
      correctAns = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Mixed
    PolygonComponent white_background_5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_89
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_90
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_91
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_43
      allowedKeys = 'z', 'm'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Thank_You
    TextComponent text_92
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Thank you! This is the end of the third task.
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    TextComponent text_111
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      wrapWidth = 0.8
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    CodeComponent end_HF_code
      Code Type = JS
      End JS Routine:
        HF_duration = HF_clock.getTime() - HF_start;
        psychoJS.experiment.addData('HF_duration',  HF_duration);
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
  Routine welcome
    TextComponent text_122
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_123
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_52
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_WCST_code
      Code Type = JS
      Begin JS Routine:
        WCST_clock = new util.Clock();
        WCST_start = WCST_clock.getTime();
  Routine Instructions_3
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The fifth task is unusual. Instead of telling you the rules, you have to figure them out.
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    KeyboardComponent key_resp_53
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_124
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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  Routine Example
    TextComponent example_text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = You will see a screen like this:
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    ImageComponent example
      image = example.jpg
      pos = (0, 0.15)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent example_text_2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        You will click on one of the four cards at the top that you think is similar to the card at the bottom.  We will tell you if you clicked the correct card or the incorrect card.



        Press the space bar to continue.
    KeyboardComponent key_resp_54
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lets_practice
    TextComponent text_125
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Let’s practice
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    KeyboardComponent key_resp_55
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_126
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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  Routine trials_practice_2
    TextComponent fixation_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent one_red_dot_2
      image = images/one_red_dot.jpg
      pos = (-0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent two_yellow_triangles_2
      image = images/two_yellow_triangles.jpg
      pos = (-0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent three_green_crosses_2
      image = images/three_green_crosses.jpg
      pos = (0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent four_blue_stars_2
      image = images/four_blue_stars.jpg
      pos = (0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent trial_card_2
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = .5
      texture resolution = 512
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    CodeComponent response_code_2
      Code Type = JS
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      Before JS Experiment:
        var timer_practice_wcst = '';
        var beginning_practice_wcst = '';
      Begin JS Routine:
        corr = 0;
        timer_practice_wcst = new util.Clock();
        beginning_practice_wcst = timer_practice_wcst.getTime();
      Each JS Frame:
        var current_practice_wcst = timer_practice_wcst.getTime();
        var allow_practice_wcst = (current_practice_wcst - beginning_practice_wcst);
        console.log(allow_practice_wcst)
        if(allow_practice_wcst < .499){
            continueRoutine = true;
            } else {
                for (var stimulus, _pj_c = 0, _pj_a = [one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    stimulus = _pj_a[_pj_c];
                    if (response_2.isPressedIn(stimulus)) {
                        var corrAnsMaybe = 'images/' + stimulus.name + '.jpg';
                        console.log(stimulus.name, corrAns, corrAnsMaybe === corrAns);
                        if ((corrAnsMaybe === corrAns)) {
                            corr = 1;
                            }
                        psychoJS.experiment.addData("correct", corr);
                        psychoJS.experiment.addData("wcst_rt", allow_practice_wcst);
                        continueRoutine = false;
            }
        }
        }
    MouseComponent response_2
      clickable = one_red_dot_2, two_yellow_triangles_2, three_green_crosses_2, four_blue_stars_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine feedback_practice_2
    CodeComponent feedback_code_3
      Code Type = Both
      Begin Experiment:
        msg = ''
      Begin JS Experiment:
        msg = "";

        trial_counter = 0;
        corr = 0 ;

        corr_trial_counter = 0;

        prev = 0;
      Begin JS Routine:
        if ((corr === 1)) {
            msg_color = 'green';
            msg = "Correct!";
        } else {
            msg_color = 'red';
            msg = "Incorrect";
        }
      Begin Routine:
        if (corr == 1):
            msg="Correct! "
        else:
            msg="Incorrect"
      End JS Routine:
        trial_counter = 0;
        condition_counter = 0;
      End Routine:
        if (trials.thisTrialN) == 21:
            trials.finished = True
    TextComponent feedback_text_2
      color [set every repeat] = $msg_color
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine ready
    TextComponent text_127
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ok, let’s play for real now.
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    TextComponent text_128
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent key_resp_56
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_meta_2
    CodeComponent code_26
      Code Type = Both
      Begin JS Experiment:
        trial_counter = 0;
        condition_counter = 0;
  Routine Trials
    TextComponent fixation_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent one_red_dot
      image = images/one_red_dot.jpg
      pos = (-0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent two_yellow_triangles
      image = images/two_yellow_triangles.jpg
      pos = (-0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent three_green_crosses
      image = images/three_green_crosses.jpg
      pos = (0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent four_blue_stars
      image = images/four_blue_stars.jpg
      pos = (0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent trial_card
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
      texture resolution = 512
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    CodeComponent response_code
      Code Type = JS
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      Before JS Experiment:
        var timer_wcst = '';
        var beginning_wcst = '';
      Begin JS Routine:
        corr = 0;
        timer_wcst = new util.Clock();
        beginning_wcst = timer_wcst.getTime();
      Each JS Frame:
        var current_wcst = timer_wcst.getTime();
        var allow_wcst = (current_wcst - beginning_wcst);
        console.log(allow_wcst)
        if(allow_wcst < .499){
            continueRoutine = true;
            } else {
                for (var stimulus, _pj_c = 0, _pj_a = [one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    stimulus = _pj_a[_pj_c];
                    if (response.isPressedIn(stimulus)) {
                        var corrAnsMaybe = 'images/' + stimulus.name + '.jpg';
                        console.log(stimulus.name, corrAns, corrAnsMaybe === corrAns);
                        if ((corrAnsMaybe === corrAns)) {
                            corr = 1;
                            }
                        var end_wcst = timer_wcst.getTime();
                        var time_wcst_trial = (end_wcst - beginning_wcst);
                        psychoJS.experiment.addData("wcst_rt", time_wcst_trial);
                        psychoJS.experiment.addData("correct", corr);
                        continueRoutine = false;
            }
        }
        }
    MouseComponent response
      clickable = one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine Feedback_2
    CodeComponent feedback_code_4
      Code Type = Both
      Begin Experiment:
        msg = ''
      Begin JS Experiment:
        msg = "";

        trial_counter = 0;
        corr = 0 ;

        corr_trial_counter = 0;

        prev = 0;
      Begin JS Routine:
        if ((corr === 1)) {
            msg_color = 'green';
            msg = "Correct! ";
        } else {
            msg_color = 'red';
            msg = "Incorrect";
        }
      Begin Routine:
        if (corr == 1):
            msg="Correct! "
        else:
            msg="Incorrect"
      End JS Routine:
        if((trial_counter === 0 && corr === 1)){
            corr_trial_counter = 1;
            prev = 1;
        } else if ((trial_counter === 0 && corr === 0)) {
            corr_trial_counter = 0;
            prev = 0;
        } else if ((trial_counter > 0 && corr === 1)){
            if((prev === 1)){
                corr_trial_counter = corr_trial_counter + 1;
                prev = 1;
            } else {
                corr_trial_counter = 1;
                prev =1;}
        } else {
            corr_trial_counter = 0;
            prev = 0;
        }

        console.log(corr_trial_counter);
        console.log(trial_counter);
        trial_counter = (trial_counter + 1);
        console.log(trial_counter);

        psychoJS.experiment.addData("trial_counter", trial_counter);

        if ((corr_trial_counter === 6)) {
            trials_3.finished = true;
            condition_counter = condition_counter + 1
            corr_trial_counter = 0
            console.log(corr_trial_counter);
            console.log(condition_counter);
        }

        if ((trial_counter === 40)){
            trials_3.finished = true;
            }
      End Routine:
        if (trials.thisTrialN) == 21:
            trials.finished = True
    TextComponent feedback_text
      color [set every repeat] = $msg_color
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine code_end_2
    CodeComponent code_ending
      Code Type = Both
      Begin JS Routine:
        console.log(condition_counter)
        console.log(trial_counter)
        if ((condition_counter > 3)) {
            blocks_2.finished = true;
        } else if ((trial_counter === 40)){
            blocks_2.finished = true;
        } else {
            blocks_2.finished = false;
        }
  Routine End_2
    TextComponent thank_you_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Great! You finished all six tasks.

        Please do not close the window browser until you see the following message and click OK.
    TextComponent end
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 0.8
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    CodeComponent code_27
      Code Type = JS
      End JS Routine:
        var end_exp = timer_exp.getTime();
        var time_exp = (end_exp - beginning_exp2);
        console.log(time_exp);
        psychoJS.experiment.addData("totaltime_exp", time_exp);
    ImageComponent image_16
      image = ef_math_saving_message.png
      pos = (0, -0.04)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    CodeComponent end_PM_code
      Code Type = JS
      End JS Routine:
        PM_duration = PM_clock.getTime() - PM_start;
        psychoJS.experiment.addData('PM_duration',  PM_duration);
  Routine overal_ef_assessment_instructions
    TextComponent text_130
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Today, you will complete six computer tasks.
        If you need to stop, please press escape twice and wait until you see this popup window before you exit.
    TextComponent text_131
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_57
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_29
      image = ef_math_saving_message.png
      pos = (0, -0.025)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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
  Routine check_first_round_practice
    CodeComponent code_32
      Code Type = JS
      Begin JS Routine:
        console.log(practice_correct)
        console.log(circle_loop)
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine pm_welcome
    TextComponent pm_welcome_txt_top
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent pm_welcome_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent pm_welcome_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent start_PM_code
      Code Type = JS
      Begin JS Routine:
        PM_clock = new util.Clock();
        PM_start = PM_clock.getTime();
  Routine plus_intro
    TextComponent plus_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a number and a plus sign.

        You will add 3 to this number and type in the answer.
    TextComponent plus_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent plus_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine plus_eg1
    CodeComponent plus_eg1_code
      Code Type = JS
      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            plus_eg1_resp_txt.text = plus_eg1_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            plus_eg1_resp_txt.text = plus_eg1_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = plus_eg1_resp_txt.text
    TextComponent plus_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 25. You will add 3 to this number.
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    TextComponent plus_eg1_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 25
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    TextComponent plus_eg1_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent plus_eg1_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Type 28 and press enter.
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    KeyboardComponent plus_eg1_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent plus_eg1_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine plus_eg2
    CodeComponent plus_eg2_code
      Code Type = JS
      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            plus_eg2_resp_txt.text = plus_eg2_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            plus_eg2_resp_txt.text = plus_eg2_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = plus_eg2_resp_txt.text
    TextComponent plus_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 13. You will add 3 to this number.
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    TextComponent plus_eg2_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 13
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    TextComponent plus_eg2_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent plus_eg2_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Type 16 and press enter.
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    KeyboardComponent plus_eg2_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent plus_eg2_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine pm_train_start
    CodeComponent pm_train_start_code
      Code Type = JS
      End JS Routine:
        pm_timer = new util.CountdownTimer(30);
    TextComponent pm_train_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s practice.




        Press the spacebar to continue.
    KeyboardComponent pm_train_start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pm_trial
    CodeComponent pm_trial_code
      Code Type = JS
      Begin JS Routine:
        textAdd = '';
        frame_n = 0;
      Each JS Frame:
        if (pm_timer.getTime() <= 0) {
            currentLoop.finished = true;
        }


        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pm_trial_resp_txt.text = pm_trial_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            pm_trial_resp_txt.text = pm_trial_resp_txt.text + textAdd
            textAdd = undefined;
        }
        frame_n = frame_n + 1;
        current_resp = pm_trial_resp_txt.text
      End JS Routine:
        if (Number(current_resp) === pm_correct) {
            pm_feedback_color = 'green';
            pm_feedback_message = "Correct";
        } else {
            pm_feedback_color = 'red';
            pm_feedback_message = "Incorrect";
        }
        //psychoJS.experiment.addData("response", current_resp);
        pm_trial_resp_txt.text = '';
    TextComponent pm_trial_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = ■
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    TextComponent pm_trial_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 1
      text [set every repeat] = $pm_number
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    TextComponent pm_trial_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $pm_symbol
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    KeyboardComponent pm_trial_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      correctAns = $pm_correct
      forceEndRoutine = False
      startVal [time (s)] = 1
      store = all keys
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    TextComponent pm_trial_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 1
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  Routine pm_feedback
    TextComponent pm_feedback_txt
      color [set every repeat] = $pm_feedback_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pm_feedback_message
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  Routine plus_test_start
    CodeComponent plus_test_start_code
      Code Type = JS
      End JS Routine:
        pm_timer = new util.CountdownTimer(120);
    TextComponent plus_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will add 3 to the number on the screen and type the correct answer.




        Press the spacebar to continue.
    KeyboardComponent plus_test_start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine minus_intro
    TextComponent minus_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a number and a minus sign.

        You will subtract 3 from this number and type in the answer.
    TextComponent minus_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent minus_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine minus_eg1
    CodeComponent minus_eg1_code
      Code Type = JS
      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            minus_eg1_resp_txt.text = minus_eg1_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            minus_eg1_resp_txt.text = minus_eg1_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = minus_eg1_resp_txt.text
    TextComponent minus_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 25. You will subtract 3 from this number.
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    TextComponent minus_eg1_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 25
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    TextComponent minus_eg1_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = -
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    TextComponent minus_eg1_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Type 22 and press enter.
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    KeyboardComponent minus_eg1_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent minus_eg1_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine minus_eg2
    CodeComponent minus_eg2_code
      Code Type = JS
      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            minus_eg2_resp_txt.text = minus_eg2_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            minus_eg2_resp_txt.text = minus_eg2_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = minus_eg2_resp_txt.text
    TextComponent minus_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 13. You will subtract 3 from this number.
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    TextComponent minus_eg2_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 13
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    TextComponent minus_eg2_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = -
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    TextComponent minus_eg2_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Type 10 and press enter.
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    KeyboardComponent minus_eg2_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent minus_eg2_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine minus_test_start
    CodeComponent minus_test_start_code
      Code Type = JS
      End JS Routine:
        pm_timer = new util.CountdownTimer(120);
    TextComponent minus_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will subtract 3 from the number on the screen and type the correct answer.




        Press the spacebar to continue.
    KeyboardComponent minus_test_start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pm_intro
    TextComponent pm_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a number and a minus sign or a plus sign.

        You will add 3 to this number if you see a plus sign, but subtract 3 from this number if you see a minus sign.
    TextComponent pm_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent pm_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pm_eg1
    CodeComponent pm_eg1_code
      Code Type = JS
      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pm_eg1_resp_txt.text = pm_eg1_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            pm_eg1_resp_txt.text = pm_eg1_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = pm_eg1_resp_txt.text
    TextComponent pm_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 25 and there is a minus sign. You will subtract 3 from this number.
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    TextComponent pm_eg1_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 25
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    TextComponent pm_eg1_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = -
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    TextComponent pm_eg1_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Please type 22 and press enter.
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    KeyboardComponent pm_eg1_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent pm_eg1_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine pm_eg2
    CodeComponent pm_eg2_code
      Code Type = JS
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      Begin JS Routine:
        frame_n = 0;
        textAdd = '';
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace','return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }
        if (frame_n < 1){
            textAdd = '';
        }
        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pm_eg2_resp_txt.text = pm_eg2_resp_txt.text.slice(0, -1);
            textAdd = undefined;
        } else if (textAdd !== undefined) {
            pm_eg2_resp_txt.text = pm_eg2_resp_txt.text + textAdd
            textAdd = undefined;
        }

        frame_n = frame_n + 1;
        current_resp = pm_eg2_resp_txt.text
    TextComponent pm_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the number is 13 but there is a plus sign. You will add 3 to this number.
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    TextComponent pm_eg2_txt_num
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = 13
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    TextComponent pm_eg2_txt_sym
      letterHeight = 0.1
      pos = (.1, 0)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent pm_eg2_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Type 16 and press enter. 
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    KeyboardComponent pm_eg2_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'backspace', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent pm_eg2_resp_txt
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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  Routine pm_test_start
    CodeComponent pm_test_start_code
      Code Type = JS
      End JS Routine:
        pm_timer = new util.CountdownTimer(120);
    TextComponent pm_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will subtract 3 from the number on the screen if you see a minus sign and you will add 3 if you see a plus sign.




        Press the spacebar to continue.
    KeyboardComponent pm_test_start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_welcome
    TextComponent oe_welcome_txt_top
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent oe_welcome_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent oe_welcome_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent start_OE_code
      Code Type = JS
      Begin JS Routine:
        OE_clock = new util.Clock();
        OE_start = OE_clock.getTime();
  Routine even_intro
    TextComponent even_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see an even number on the left or right side.

        You will press ‘z’ if the number is on the left and press ‘m’ if the number is on the right.
    TextComponent even_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    KeyboardComponent even_intro_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine even_eg1
    TextComponent even_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the even number is on the left side. You will press the key on the same side as the number. 
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    TextComponent even_eg1_txt_num
      letterHeight = 0.1
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent even_eg1_txt_bot
      letterHeight = 0.05
      pos = (-.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘z’.
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    KeyboardComponent even_eg1_key_resp
      allowedKeys = 'z',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine even_eg2
    TextComponent even_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the even number is on the right side. You will press the key on the same side as the number. 
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    TextComponent even_eg2_txt_num
      letterHeight = 0.1
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent even_eg2_txt_bot
      letterHeight = 0.05
      pos = (.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘m’.
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    KeyboardComponent even_eg2_key_resp
      allowedKeys = 'm',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_train_start
    TextComponent oe_train_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s practice.




        Press ‘z’ or ‘m’ to continue.
    KeyboardComponent oe_train_start_key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_trial
    CodeComponent oe_trial_code
      Code Type = JS
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      End JS Routine:
        if ((oe_trial_key_resp.keys === undefined)) {
            oe_feedback_color = "black";
            oe_feedback_message = "No response";
        } else {
            if ((oe_trial_key_resp.corr > 0)) {
                oe_feedback_color = "green";
                oe_feedback_message = "Correct";
            } else {
                oe_feedback_color = "red";
                oe_feedback_message = "Incorrect";
            }
        }
    TextComponent oe_trial_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = ■
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    TextComponent oe_trial_txt_num
      letterHeight = 0.1
      pos [set every repeat] = oe_position
      startVal [time (s)] = 1
      stopVal [duration (s)] = .75
      text [set every repeat] = $oe_number
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    KeyboardComponent oe_trial_key_resp
      allowedKeys = 'm', 'z'
      correctAns = $oe_correct
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine oe_feedback
    TextComponent oe_feedback_txt
      color [set every repeat] = $oe_feedback_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $oe_feedback_message
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  Routine even_test_start
    TextComponent even_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will see an even number and press the key on the same side as the number.




        Press the space bar to continue.
    KeyboardComponent even_test_start_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine odd_intro
    TextComponent odd_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see an odd number on the left or right side.

        Your job will to press ‘m’ if the number is on the left and press ‘z’ if the number is on the right.
    TextComponent odd_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent odd_intro_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine odd_eg1
    TextComponent odd_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the odd number is on the left side. Your job is to press the key on the opposite side of the number. 
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    TextComponent odd_eg1_txt_num
      letterHeight = 0.1
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent odd_eg1_txt_bot
      letterHeight = 0.05
      pos = (.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘m’.
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    KeyboardComponent odd_eg1_key_resp
      allowedKeys = 'm','z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine odd_eg2
    TextComponent odd_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the odd number is on the right side. Your job is to press the key on the opposite side of the number. 
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    TextComponent odd_eg2_txt_num
      letterHeight = 0.1
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent odd_eg2_txt_bot
      letterHeight = 0.05
      pos = (-.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘z’.
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    KeyboardComponent odd_eg2_key_resp
      allowedKeys = 'm', 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine odd_test_start
    TextComponent odd_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will see an odd number and press the key on the opposite side of the number.



        Press the space bar to continue.
    KeyboardComponent odd_test_start_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_intro
    TextComponent oe_intro_txt_top
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see an odd or even number on the left or right side.

        Your job is to press the key on the same side of the number if it is even, but press the key on the opposite side of the number if it is odd.
    TextComponent oe_intro_txt_bot
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent oe_intro_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_eg1
    TextComponent oe_eg1_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, there is an even number on the left side. Your job is to respond on the same side as this number.
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    TextComponent oe_eg1_txt_num
      letterHeight = 0.1
      pos = (-.3, .1)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent oe_eg1_txt_bot
      letterHeight = 0.05
      pos = (-.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘z’.
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    KeyboardComponent oe_eg1_key_resp
      allowedKeys = 'm', 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_test_start
    TextComponent oe_test_start_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ok let’s play for real now. Remember, you will see an even or odd number and press the key on the same side of the number if it is even, but press the key on the opposite side of the number if it is odd.




        Press the space bar to continue.
    KeyboardComponent oe_test_start_key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_eg2
    TextComponent oe_eg2_txt_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, there is an odd number on the right side. Your job is to press the key on the opposite side of this number.
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    TextComponent oe_eg2_txt_num
      letterHeight = 0.1
      pos = (.3, .1)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent oe_eg2_txt_bot
      letterHeight = 0.05
      pos = (-.3, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘z’.
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    KeyboardComponent oe_eg2_key_resp
      allowedKeys = 'm', 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine oe_speed_instr
    TextComponent oe_speed_instr_top
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The numbers will dissapear after a short time.

        Try to press the correct key as fast as you can!
    TextComponent oe_speed_instr_bot
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘z’ or ‘m’ to continue.
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    KeyboardComponent oe_speed_instr_key_resp
      allowedKeys = 'm', 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you_5
    TextComponent text_129
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Thank you! This is the end of the fifth task.
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    CodeComponent end_WCST_code
      Code Type = JS
      End JS Routine:
        WCST_duration = WCST_clock.getTime() - WCST_start;
        psychoJS.experiment.addData('WCST_duration',  WCST_duration);
  Routine end_OE
    TextComponent end_OE_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Thank you! This is the end of the fourth task.
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    CodeComponent end_OE_code
      Code Type = JS
      End JS Routine:
        OE_duration = OE_clock.getTime() - OE_start;
        psychoJS.experiment.addData('OE_duration',  OE_duration);
Flow
  Routine Welcome
  Routine overal_ef_assessment_instructions
  Routine Introduction
  Routine Circles_Example_1
  Routine Circles_Example_2
  Routine Circles_Example_3
  Routine Circle_Example_4
  Routine Initial_Circles
  Routine Circle_Example_5A
  Routine Circle_Example_6
  Routine Circle_Example_7
  Routine Start_Practice
  LoopInitiator Meta_Loop loopType="TrialHandler"
    conditionsFile = Meta_Loop_072418.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Update_loop
    Routine Check_practice_over
    LoopInitiator Circle_Blocks loopType="TrialHandler"
      conditionsFile = $Circle_Loop
      loopType = random
      nReps = 1
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      Routine check_first_round_practice
      Routine Initial_Circles
      Routine First_Circle_Presentation
      Routine Second_Circle_Presentation
      Routine Third_Circle_Presentation
      Routine Fourth_Circle_Presentation
      Routine Fifth_Circle_Presentation
      Routine Sixth_Circle_Presentation
      Routine Seventh_Circle_Presentation
      Routine Eighth_Circle_Presentation
      Routine Wait_for_First_response
      Routine Wait_for_Second_response
      Routine Wait_for_Third_Response
      Routine Wait_for_Fourth_Response
      Routine Wait_for_Fifth_Response
      Routine Wait_For_Sixth_Response
      Routine Wait_For_Seventh_Response
      Routine Wait_For_Eighth_Response
      Routine Check_outcome
      Routine Blank_Screen
      Routine feedback
      Routine Repeat_Instructions
    LoopTerminator Circle_Blocks
    Routine check_end_experiment
  LoopTerminator Meta_Loop
  Routine Get_Experimenter
  Routine Instructions
  Routine get_ready
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine code_meta
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = three_practice.xlsx
      loopType = random
      nReps = 1
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      Routine Presentation_practice
      Routine Recall_practice
      Routine feedback_practice
    LoopTerminator practice
    Routine code_end
    Routine repeat_instructions
  LoopTerminator trials_2
  Routine real_trials
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Presentation
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
  Routine Welcome_2
  Routine IntroA_2
  Routine IntroB_2
  Routine Example1
  Routine Example2
  Routine Quick_Reminder
  Routine Practice_congruent
  LoopInitiator practice_congruent_1 loopType="TrialHandler"
    conditionsFile = test_practice_congruent.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_congruent
    Routine feedback_hf_congruent_1
  LoopTerminator practice_congruent_1
  Routine congruent_reminder
  LoopInitiator practice_congruent_2 loopType="TrialHandler"
    conditionsFile = practice congruent.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_congruent_2
    Routine feedback_hf_congruent_2
  LoopTerminator practice_congruent_2
  Routine Ready
  LoopInitiator trial_hearts loopType="TrialHandler"
    conditionsFile = block1_Hearts.xlsx
    loopType = random
    nReps = 1
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    Routine Hearts
  LoopTerminator trial_hearts
  Routine IntroA_3
  Routine IntroB_3
  Routine Example3
  Routine Example4
  Routine Quick_Reminder_Incongruent
  Routine Practice_Incongruent
  LoopInitiator practice_incongruent_1 loopType="TrialHandler"
    conditionsFile = practice incongruent.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_incongruent
    Routine feedback_hf_incongruent_1
  LoopTerminator practice_incongruent_1
  Routine incongruent_reminder
  LoopInitiator practice_incongruent_2 loopType="TrialHandler"
    conditionsFile = practice incongruent.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_incongruent_2
    Routine feedback_hf_incongruent_2
  LoopTerminator practice_incongruent_2
  Routine Ready2
  LoopInitiator trial_flowers loopType="TrialHandler"
    conditionsFile = block2_Flowers.xlsx
    loopType = random
    nReps = 1
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    Routine Flowers
  LoopTerminator trial_flowers
  Routine IntroB_5
  Routine IntroC_11
  Routine IntroC_2
  Routine Quick_Reminder_Mixed
  Routine Practice_mixed
  LoopInitiator practice_mixed_1 loopType="TrialHandler"
    conditionsFile = practice mixed.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_mixed
    Routine feedback_hf_mixed_1
  LoopTerminator practice_mixed_1
  Routine reminder_mixed
  LoopInitiator practice_mixed_2 loopType="TrialHandler"
    conditionsFile = practice mixed.xlsx
    loopType = random
    nReps = 1
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    Routine Practice_trial_mixed_2
    Routine feedback_hf_mixed_2
  LoopTerminator practice_mixed_2
  Routine Ready3
  Routine mixed_first
  LoopInitiator trial_mixed loopType="TrialHandler"
    conditionsFile = block3_Mixed001_random.xlsx
    loopType = random
    nReps = 1
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    Routine Mixed
  LoopTerminator trial_mixed
  Routine Thank_You
  Routine oe_welcome
  Routine even_intro
  Routine even_eg1
  Routine even_eg2
  Routine oe_speed_instr
  Routine oe_train_start
  LoopInitiator even_train_loop loopType="TrialHandler"
    conditionsFile = even_input.csv
    loopType = random
    nReps = 1
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    Routine oe_trial
    Routine oe_feedback
  LoopTerminator even_train_loop
  Routine even_test_start
  LoopInitiator even_test_loop loopType="TrialHandler"
    conditionsFile = even_input.csv
    loopType = random
    nReps = 2
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    Routine oe_trial
  LoopTerminator even_test_loop
  Routine odd_intro
  Routine odd_eg1
  Routine odd_eg2
  Routine oe_speed_instr
  Routine oe_train_start
  LoopInitiator odd_train_loop loopType="TrialHandler"
    conditionsFile = odd_input.csv
    loopType = random
    nReps = 1
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    Routine oe_trial
    Routine oe_feedback
  LoopTerminator odd_train_loop
  Routine odd_test_start
  LoopInitiator odd_test_loop loopType="TrialHandler"
    conditionsFile = odd_input.csv
    loopType = random
    nReps = 2
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    Routine oe_trial
  LoopTerminator odd_test_loop
  Routine oe_intro
  Routine oe_eg1
  Routine oe_eg2
  Routine oe_speed_instr
  Routine oe_train_start
  LoopInitiator oe_train_loop loopType="TrialHandler"
    conditionsFile = oe_input.csv
    loopType = random
    nReps = 1
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    Routine oe_trial
    Routine oe_feedback
  LoopTerminator oe_train_loop
  Routine oe_test_start
  LoopInitiator oe_test_loop loopType="TrialHandler"
    conditionsFile = oe_input.csv
    loopType = random
    nReps = 2
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    Routine oe_trial
  LoopTerminator oe_test_loop
  Routine end_OE
  Routine welcome
  Routine Instructions_3
  Routine Example
  Routine lets_practice
  LoopInitiator trials_practice_loop loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = random
    nReps = 1
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    Routine trials_practice_2
    Routine feedback_practice_2
  LoopTerminator trials_practice_loop
  Routine ready
  LoopInitiator blocks_2 loopType="TrialHandler"
    conditionsFile = chooseRule.xlsx
    loopType = random
    nReps = 1
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    Routine code_meta_2
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Trials
      Routine Feedback_2
    LoopTerminator trials_3
    Routine code_end_2
  LoopTerminator blocks_2
  Routine thank_you_5
  Routine pm_welcome
  Routine plus_intro
  Routine plus_eg1
  Routine plus_eg2
  Routine pm_train_start
  LoopInitiator plus_train_loop loopType="TrialHandler"
    conditionsFile = plus_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
    Routine pm_feedback
  LoopTerminator plus_train_loop
  Routine plus_test_start
  LoopInitiator plus_test_loop loopType="TrialHandler"
    conditionsFile = plus_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
  LoopTerminator plus_test_loop
  Routine minus_intro
  Routine minus_eg1
  Routine minus_eg2
  Routine pm_train_start
  LoopInitiator minus_train_loop loopType="TrialHandler"
    conditionsFile = minus_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
    Routine pm_feedback
  LoopTerminator minus_train_loop
  Routine minus_test_start
  LoopInitiator minus_test_loop loopType="TrialHandler"
    conditionsFile = minus_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
  LoopTerminator minus_test_loop
  Routine pm_intro
  Routine pm_eg1
  Routine pm_eg2
  Routine pm_train_start
  LoopInitiator pm_train_loop loopType="TrialHandler"
    conditionsFile = pm_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
    Routine pm_feedback
  LoopTerminator pm_train_loop
  Routine pm_test_start
  LoopInitiator pm_test_loop loopType="TrialHandler"
    conditionsFile = pm_input.csv
    loopType = random
    nReps = 1
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    Routine pm_trial
  LoopTerminator pm_test_loop
  Routine End_2
