PsychoPy2experiment version="2020.2.8"
Settings
  Completed URL = https://run.pavlovia.org/skuchynka/mlm-exp-final/html
  Experiment info = {'Enter participant ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = VSWM_Digit_HF_WCST_TOL_090521
  logging level = debug
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Routines
  Routine Introduction
    TextComponent text_14
      letterHeight = 0.05
      pos = (0.0, 0.15)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        In this first task you will see a series of circles light up.

        Your job is to use the mouse to click on the circles in reverse order.
    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0
      text = Press space bar to continue.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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
  Routine Circles_Example_1
    PolygonComponent init_circle
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_17
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_18
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_19
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_20
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_21
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_22
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_23
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_24
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_25
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_26
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_27
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_28
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_29
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_30
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    PolygonComponent init_circle_31
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    TextComponent For_example
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = For example, if you saw the following sequence:
      wrapWidth = 2
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  Routine Circles_Example_2
    PolygonComponent init_circle_32
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_33
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_34
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent C4_circle_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_36
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_37
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_38
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_39
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_40
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_41
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_42
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_43
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_44
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_45
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_46
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_47
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent For_example_2
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the following sequence:
      wrapWidth = 2
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  Routine Circles_Example_3
    PolygonComponent init_circle_35
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_48
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_49
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_63
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_50
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent circle_6_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_52
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_53
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_54
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_55
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_56
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_57
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_58
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_59
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_60
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_61
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent b_For_example_4_
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the following sequence:
      wrapWidth = 2
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  Routine Circle_Example_5A
    PolygonComponent first_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent first_mouse_response_example
      clickable = first_response_C15_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_first_circle_feedback_2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(first_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            print(clicked_frame)
            clicked_circle=eval(first_mouse_response_example.clicked_name[0])
            print(clicked_circle)
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((first_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            console.log(clicked_frame);
            clicked_circle = eval(first_mouse_response_example.clicked_name[0]);
            console.log(clicked_circle);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor([(- 1.0), (- 1.0), (- 1.0)]);
            continueRoutine = false;
        }
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (0.25, -0.3)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle
      fillColor = $[1,1,1]
      ori = 90
      pos = (0.23, -0.3)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Initial_Circles
    PolygonComponent init_circle_1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent init_circle_16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      units = height
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    CodeComponent code_33
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Check_outcome
    CodeComponent code_2
      Code Type = JS
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      Before JS Experiment:
        var practice_correct = 0;
      Begin JS Experiment:
        corr = 0;
      Begin JS Routine:
        corr = 0;
        trial_counter = (trial_counter + 1);
        if ((circle_loop === 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        trials_correct = (trials_correct + 1);
                    }
                }
            }
        }
        if ((circle_loop === 4)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            trials_correct = (trials_correct + 1);
                        }
                    }
                }
            }
        }
        if ((circle_loop === 5)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                trials_correct = (trials_correct + 1);
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 6)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    trials_correct = (trials_correct + 1);
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 7)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    if ((seventh_mouse_response.clicked_name[0] === Correct_response_circle7)) {
                                        trials_correct = (trials_correct + 1);
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop === 8)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        if ((fourth_mouse_response.clicked_name[0] === Correct_response_circle4)) {
                            if ((fifth_mouse_response.clicked_name[0] === Correct_response_circle5)) {
                                if ((sixth_mouse_response.clicked_name[0] === Correct_response_circle6)) {
                                    if ((seventh_mouse_response.clicked_name[0] === Correct_response_circle7)) {
                                        if ((eighth_mouse_response.clicked_name[0] === Correct_response_circle8)) {
                                            trials_correct = (trials_correct + 1);
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((circle_loop > 2)) {
            if (((trial_counter === 2) && (trials_correct === 2))) {
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 2) && (trials_correct === 0))) {
                end_experiment = 1;
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 3) && (trials_correct === 1))) {
                end_experiment = 1;
                Circle_Blocks.finished = true;
            }
            if (((trial_counter === 3) && (trials_correct > 1))) {
                Circle_Blocks.finished = true;
            }
        }

        console.log(trials_correct)
        console.log(trial_counter)
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        corr = 1;
                    }
                }
            }
        } else {
            corr = 0;
            }
      End JS Routine:
        console.log(corr)
        console.log(circle_loop)
        if ((corr === 1)) {
            msg = "Correct!";
        } else {
            msg = "Incorrect";
            }

        console.log(msg)

        if ((circle_loop < 3)) {
            if ((first_mouse_response.clicked_name[0] === Correct_response_circle1)) {
                if ((second_mouse_response.clicked_name[0] === Correct_response_circle2)) {
                    if ((third_mouse_response.clicked_name[0] === Correct_response_circle3)) {
                        trials_correct = (trials_correct + 1);
                    }
                }
            }
        }

        console.log(trials_correct)

        if ((circle_loop === 2)) {
            if ((trial_counter === 2) && (trials_correct === 2)) {
                Circle_Blocks.finished = true;
            }
            if ((trial_counter === 4)) {
                Circle_Blocks.finished = true;
            }
        }
  Routine Wait_For_Seventh_Response
    CodeComponent check_loop4_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 6:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 6)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent seventh_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent seventh_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent seventh_mouse_response
      clickable = seventh_response_C1, seventh_response_C2, seventh_response_C3, seventh_response_C4, seventh_response_C5, seventh_response_C6, seventh_response_C7, seventh_response_C8, seventh_response_C9, seventh_response_C10, seventh_response_C11, seventh_response_C12, seventh_response_C13, seventh_response_C14, seventh_response_C15, seventh_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_b_circle_feedback_5__2__3_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(seventh_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(seventh_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((seventh_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(seventh_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Update_loop
    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        circle_loop = 0;
      Begin JS Routine:
        circle_loop = (circle_loop + 1);
        trial_counter = 0;
        trials_correct = 0;

        console.log(circle_loop)
        console.log(trial_counter)
        console.log(trials_correct)
      End JS Routine:
        console.log(circle_loop)
        console.log(trial_counter)
        console.log(trials_correct)
  Routine Third_Circle_Presentation
    PolygonComponent third_circle_pres_C1
      fillColor [set every repeat] = $circle1color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C2
      fillColor [set every repeat] = $circle2color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C3
      fillColor [set every repeat] = $circle3color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C4
      fillColor [set every repeat] = $circle4color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C5
      fillColor [set every repeat] = $circle5color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C6
      fillColor [set every repeat] = $circle6color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C7
      fillColor [set every repeat] = $circle7color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C8
      fillColor [set every repeat] = $circle8color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C9
      fillColor [set every repeat] = $circle9color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C10
      fillColor [set every repeat] = $circle10color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C11
      fillColor [set every repeat] = $circle11color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C12
      fillColor [set every repeat] = $circle12color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C13
      fillColor [set every repeat] = $circle13color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C14
      fillColor [set every repeat] = $circle14color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C15
      fillColor [set every repeat] = $circle15color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent third_circle_pres_C16
      fillColor [set every repeat] = $circle16color_third_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_36
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Wait_for_Fourth_Response
    CodeComponent check_loop1_B
      Code Type = JS
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      Each JS Frame:
        if ((circle_loop > 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fourth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fourth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent fourth_mouse_response
      clickable = fourth_response_C1, fourth_response_C2, fourth_response_C3, fourth_response_C4, fourth_response_C5, fourth_response_C6, fourth_response_C7, fourth_response_C8, fourth_response_C9, fourth_response_C10, fourth_response_C11, fourth_response_C12, fourth_response_C13, fourth_response_C14, fourth_response_C15, fourth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_circle_feedback_5_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(fourth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(fourth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((fourth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(fourth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Welcome
    TextComponent text_12
      letterHeight = 0.16
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press space bar to continue.
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent experiment_done_code
      Code Type = JS
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      Before JS Experiment:
        var stroop_schedule = ['Stroop_Stim_Schedule_1.xlsx','Stroop_Stim_Schedule_4.xlsx','Stroop_Stim_Schedule_5.xlsx', 'Stroop_Stim_Schedule_8.xlsx','Stroop_Stim_Schedule_11.xlsx'];
        var x1 = '';
        var x2 = '';
        var x3 = '';

        var myBrowser;
        var sUsrAg;
        var nIdx;
        var beginning_exp = '';
        var timer = '';
        var timer_exp = '';
        var beginning_exp = '';
        var beginning_exp2 = '';
        function getBrowserId () {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        myBrowser = getBrowserId();
      Begin JS Experiment:
        //x3 = expInfo["Enter participant ID"];
        //console.log(x3)
        //x2 = parseInt(x3.substr(-2));
        //console.log(x2)
        //x1 = parseInt(x2%5);
        //console.log(x1)

        //if (isNaN(x1)) {
        //  psychoJS.quit()
        //}

        end_experiment = 0;
        timer = new util.Clock();
        timer_exp = new util.Clock();
        beginning_exp = timer.getTime();
        beginning_exp2 = timer_exp.getTime();
        psychoJS.experiment.addData("Browser", myBrowser)
  Routine Fifth_Circle_Presentation
    CodeComponent check_loop2
      Code Type = Both
      Begin Routine:
        if circle_loop > 4:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 4)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fifth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fifth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_fifth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Fourth_Circle_Presentation
    CodeComponent check_loop1
      Code Type = JS
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      Each JS Frame:
        if ((circle_loop > 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fourth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent fourth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_fourth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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
  Routine Wait_for_Third_Response
    PolygonComponent third_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent third_mouse_response
      clickable = third_response_C1, third_response_C2, third_response_C3, third_response_C4, third_response_C5, third_response_C6, third_response_C7, third_response_C8, third_response_C9, third_response_C10, third_response_C11, third_response_C12, third_response_C13, third_response_C14, third_response_C15, third_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent third_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        if (((third_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(third_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Circle_Example_6
    PolygonComponent second_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent second_mouse_response_example
      clickable = second_response_C6_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent second_circle_feedback_2
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(second_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(second_mouse_response_example.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((second_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(second_mouse_response_example.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([-1, -1, -1]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (-0.05, 0.1)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle_2
      fillColor = $[1,1,1]
      ori = 90
      pos = (-0.07, 0.1)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles_2
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Circle_Example_7
    PolygonComponent third_response_C1_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C2_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C3_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C4_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C5_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C6_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C7_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C8_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C9_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C10_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C11_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C12_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C13_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C14_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C15_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent third_response_C16_example
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent third_mouse_response_example
      clickable = third_response_C4_example
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_third_circle_feedback_2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(third_mouse_response_example.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(third_mouse_response_example.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((third_mouse_response_example.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(third_mouse_response_example.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([-1, -1, -1]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      lineWidth = 4
      pos = (0.55, 0.3)
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent triangle_3
      fillColor = $[1,1,1]
      ori = 90
      pos = (0.53, 0.3)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent push_these_circles_3
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = You would click on the circles in this order:
      wrapWidth = 2
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  Routine Circle_Example_4
    PolygonComponent init_circle_51
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_62
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_64
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_65
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_66
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_80
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_67
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_68
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_69
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_70
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_71
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_72
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_73
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_74
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent circle_15_lights_up
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent init_circle_76
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    TextComponent For_example_5
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = For example, if you saw the following sequence:
      wrapWidth = 2
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  Routine Second_Circle_Presentation
    PolygonComponent second_circle_pres_C1
      fillColor [set every repeat] = $circle1color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C2
      fillColor [set every repeat] = $circle2color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C3
      fillColor [set every repeat] = $circle3color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C4
      fillColor [set every repeat] = $circle4color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C5
      fillColor [set every repeat] = $circle5color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C6
      fillColor [set every repeat] = $circle6color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C7
      fillColor [set every repeat] = $circle7color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C8
      fillColor [set every repeat] = $circle8color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C9
      fillColor [set every repeat] = $circle9color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C10
      fillColor [set every repeat] = $circle10color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C11
      fillColor [set every repeat] = $circle11color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C12
      fillColor [set every repeat] = $circle12color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C13
      fillColor [set every repeat] = $circle13color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C14
      fillColor [set every repeat] = $circle14color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C15
      fillColor [set every repeat] = $circle15color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent second_circle_pres_C16
      fillColor [set every repeat] = $circle16color_second_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_35
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine check_end_experiment
    CodeComponent check_if_experiment_done
      Code Type = Both
      Begin Experiment:
        end_experiment=0
      Begin JS Experiment:
        end_experiment = 0;
      Begin JS Routine:
        if ((end_experiment === 1)) {
            Meta_Loop.finished = true;
        }
      Begin Routine:
        if end_experiment==1:
            Meta_Loop.finished=True
  Routine Blank_Screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Wait_for_Fifth_Response
    CodeComponent check_loop2_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 4:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 4)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent fifth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent fifth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent fifth_mouse_response
      clickable = fifth_response_C1, fifth_response_C2, fifth_response_C3, fifth_response_C4, fifth_response_C5, fifth_response_C6, fifth_response_C7, fifth_response_C8, fifth_response_C9, fifth_response_C10, fifth_response_C11, fifth_response_C12, fifth_response_C13, fifth_response_C14, fifth_response_C15, fifth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_circle_feedback_5__2_
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(fifth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(fifth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((fifth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(fifth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
  Routine First_Circle_Presentation
    PolygonComponent first_circle_pres_C1
      fillColor [set every repeat] = $circle1color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C2
      fillColor [set every repeat] = $circle2color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C3
      fillColor [set every repeat] = $circle3color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C4
      fillColor [set every repeat] = $circle4color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C5
      fillColor [set every repeat] = $circle5color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C6
      fillColor [set every repeat] = $circle6color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C7
      fillColor [set every repeat] = $circle7color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C8
      fillColor [set every repeat] = $circle8color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C9
      fillColor [set every repeat] = $circle9color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C10
      fillColor [set every repeat] = $circle10color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C11
      fillColor [set every repeat] = $circle11color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C12
      fillColor [set every repeat] = $circle12color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C13
      fillColor [set every repeat] = $circle13color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C14
      fillColor [set every repeat] = $circle14color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C15
      fillColor [set every repeat] = $circle15color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent first_circle_pres_C16
      fillColor [set every repeat] = $circle16color_first_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    CodeComponent code_34
      Code Type = JS
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Sixth_Circle_Presentation
    CodeComponent check_loop3
      Code Type = Both
      Begin Routine:
        if circle_loop > 5:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 5)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent sixth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent sixth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_sixth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Wait_for_Second_response
    PolygonComponent second_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent second_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent second_mouse_response
      clickable = second_response_C1, second_response_C2, second_response_C3, second_response_C4, second_response_C5, second_response_C6, second_response_C7, second_response_C8, second_response_C9, second_response_C10, second_response_C11, second_response_C12, second_response_C13, second_response_C14, second_response_C15, second_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent second_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
        if (((second_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(second_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Start_Practice
    TextComponent practice_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You'll first do a short practice.
      wrapWidth = 1.8
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    TextComponent spacebar_text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
      wrapWidth = 1.8
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Wait_for_First_response
    PolygonComponent first_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent first_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent first_mouse_response
      clickable = first_response_C1, first_response_C2, first_response_C3, first_response_C4, first_response_C5, first_response_C6, first_response_C7, first_response_C8, first_response_C9, first_response_C10, first_response_C11, first_response_C12, first_response_C13, first_response_C14, first_response_C15, first_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent first_circle_feedback
      Code Type = JS
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      Begin JS Routine:
        clicked_frame = null;
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        if (((first_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(first_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Get_Experimenter
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you! This is the end of this task
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    TextComponent b_text_15_
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = 0.8
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  Routine Check_practice_over
    CodeComponent code_3
      Code Type = JS
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      Each JS Frame:
        console.log(circle_loop)
        if (circle_loop == 3) {
            console.log(circle_loop);
            console.log("this is not working");
            continueRoutine = true;
        } else {
            console.log(circle_loop);
            console.log("maybe");
            continueRoutine = false;
        }
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You'll now start the game. 
      wrapWidth = 1.8
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent mouse_click_text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
      wrapWidth = 1.8
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  Routine Eighth_Circle_Presentation
    CodeComponent check_loop7
      Code Type = Both
      Begin Routine:
        if circle_loop > 7:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 7)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent eighth_circle_pres_C1
      fillColor [set every repeat] = $circle1color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C2
      fillColor [set every repeat] = $circle2color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C3
      fillColor [set every repeat] = $circle3color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C4
      fillColor [set every repeat] = $circle4color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C5
      fillColor [set every repeat] = $circle5color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C6
      fillColor [set every repeat] = $circle6color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C7
      fillColor [set every repeat] = $circle7color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C8
      fillColor [set every repeat] = $circle8color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C9
      fillColor [set every repeat] = $circle9color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C10
      fillColor [set every repeat] = $circle10color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C11
      fillColor [set every repeat] = $circle11color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C12
      fillColor [set every repeat] = $circle12color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C13
      fillColor [set every repeat] = $circle13color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C14
      fillColor [set every repeat] = $circle14color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C15
      fillColor [set every repeat] = $circle15color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent eighth_circle_pres_C16
      fillColor [set every repeat] = $circle16color_eighth_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Wait_For_Eighth_Response
    CodeComponent check_loop7_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 7:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 7)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent eighth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent eighth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent eighth_mouse_response
      clickable = eighth_response_C1, eighth_response_C2, eighth_response_C3, eighth_response_C4, eighth_response_C5, eighth_response_C6, eighth_response_C7, eighth_response_C8, eighth_response_C9, eighth_response_C10, eighth_response_C11, eighth_response_C12, eighth_response_C13, eighth_response_C14, eighth_response_C15, eighth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent circle_feedback_8
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(eighth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(eighth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((eighth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(eighth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Wait_For_Sixth_Response
    CodeComponent check_loop3_B
      Code Type = Both
      Begin Routine:
        if circle_loop > 5:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 5)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent sixth_response_C1
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C5
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C6
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C7
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C8
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C9
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C10
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C11
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C12
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C13
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C14
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C15
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent sixth_response_C16
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      units = height
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    MouseComponent sixth_mouse_response
      clickable = sixth_response_C1, sixth_response_C2, sixth_response_C3, sixth_response_C4, sixth_response_C5, sixth_response_C6, sixth_response_C7, sixth_response_C8, sixth_response_C9, sixth_response_C10, sixth_response_C11, sixth_response_C12, sixth_response_C13, sixth_response_C14, sixth_response_C15, sixth_response_C16
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent b_b_circle_feedback_5__2__2
      Code Type = Both
      Begin JS Routine:
        clicked_frame = null;
      Begin Routine:
        clicked_frame=None
      Each Frame:
        if len(sixth_mouse_response.clicked_name) > 0 and clicked_frame is None:
            clicked_frame=frameN
            clicked_circle=eval(sixth_mouse_response.clicked_name[0])
            clicked_circle.setFillColor([1.000,1.000,1.000])

        if clicked_frame is not None and frameN > clicked_frame + 20:
            clicked_circle.setFillColor([-1.000,-1.000,-1.000])
            continueRoutine = False
      Each JS Frame:
        if (((sixth_mouse_response.clicked_name.length > 0) && (clicked_frame === null))) {
            clicked_frame = frameN;
            clicked_circle = eval(sixth_mouse_response.clicked_name[0]);
            clicked_circle.setFillColor(new util.Color([1, 1, 1]));
        }
        if (((clicked_frame !== null) && (frameN > (clicked_frame + 20)))) {
            clicked_circle.setFillColor(new util.Color([(- 1.0), (- 1.0), (- 1.0)]));
            continueRoutine = false;
        }
      End JS Routine:
        /* Syntax Error: Fix Python code */
  Routine Seventh_Circle_Presentation
    CodeComponent check_loop4
      Code Type = Both
      Begin Routine:
        if circle_loop > 6:
            continueRoutine=True
        else:
            continueRoutine=False
      Each JS Frame:
        if ((circle_loop > 6)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
    PolygonComponent seventh_circle_pres_C1
      fillColor [set every repeat] = $circle1color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C2
      fillColor [set every repeat] = $circle2color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C3
      fillColor [set every repeat] = $circle3color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C4
      fillColor [set every repeat] = $circle4color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C5
      fillColor [set every repeat] = $circle5color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C6
      fillColor [set every repeat] = $circle6color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C7
      fillColor [set every repeat] = $circle7color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C8
      fillColor [set every repeat] = $circle8color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, 0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C9
      fillColor [set every repeat] = $circle9color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C10
      fillColor [set every repeat] = $circle10color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C11
      fillColor [set every repeat] = $circle11color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C12
      fillColor [set every repeat] = $circle12color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.1)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C13
      fillColor [set every repeat] = $circle13color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C14
      fillColor [set every repeat] = $circle14color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (-0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C15
      fillColor [set every repeat] = $circle15color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.15, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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    PolygonComponent seventh_circle_pres_C16
      fillColor [set every repeat] = $circle16color_seventh_circle_shown
      lineColor [set every repeat] = $[1.000,1.000,1.000]
      lineWidth = 2
      nVertices = 90
      pos = (0.45, -0.3)
      shape = regular polygon...
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.9
      units = height
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  Routine Repeat_Instructions
    TextComponent repeat_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember!
        Your job is to use the mouse to click on the circles in reverse order.
    CodeComponent code_4
      Code Type = JS
      Each JS Frame:
        console.log(trials_correct)
        console.log(trial_counter)
        if ((circle_loop < 3)) {
            if ((trial_counter < 2)) {
                continueRoutine = false;
            } else if ((trial_counter === 2)) {
                if (trials_correct ===2){
                    continueRoutine = false;
                    practice_correct = 1;
                    }
                else {
                    continueRoutine = true;
                    }
            } else if ((trial_counter === 3)) {
                continueRoutine = false;
            } else if ((trial_counter === 4) && (trials_correct > 2)) {
                continueRoutine = false;
            } else {
                continueRoutine = false;
                }
        }else {
            continueRoutine = false;
        }

        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }

        console.log(practice_correct);
    KeyboardComponent key_resp
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press space bar to continue.
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  Routine feedback
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    CodeComponent code_5
      Code Type = JS
      Begin JS Experiment:
        msg = '';
      Each JS Frame:
        if ((circle_loop < 3)) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }

        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the second task, you will try to remember a sequence of numbers that appears on the screen one after the other.

        When you see the "Recall" screen, type the numbers you saw in the opposite order you saw them. Use the number keys at the top of the keyboard.

        Be careful with your typing, as if you make a mistake, you will not be able to correct it. Press ‘ENTER’ to confirm your answer.

        Do your best to memorize the numbers, and do not write them down or use any other tool to help you remember them.

        Press ‘space bar’ to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Both
      Begin JS Experiment:
        trial_counter = 0;
        condition_counter = 0;
  Routine get_ready
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let’s practice!
        When you the square, it means that the task is about to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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  Routine code_meta
    CodeComponent code_7
      Code Type = JS
  Routine Presentation_practice
    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ■
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    TextComponent pres_text_2
      letterHeight = 0.13
      startVal [time (s)] = 1
      text = a
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    CodeComponent pres_code_2
      Code Type = Both
      Begin JS Routine:
        // Convert sequence to list
        var output = [],
            sNumber = digits.toString();

        for (var i = 0, len = sNumber.length; i < len; i += 1) {
            output.push(+sNumber.charAt(i));
        }

        nList = digits.toString().split('').map((i)=>Number(i))
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text_2.text = nList[i]
      Each JS Frame:
        // Convert time ti a list index
        i = Math.floor(t-1);
        // console.log(i)
        // console.log(nList.length)
        // console.log(fixation_2)
        // console.log(pres_text_2.text)
        // pres_text_2.text = 'a'
        // console.log(pres_text_2.text)

        // Index current number in the list
        // or end routine if all numbers presented
        if (i === nList.length) {
            continueRoutine = false;
        } else if (i < 0){
            pres_text_2.text = ' '
        } else {
            console.log(pres_text_2.text)
            pres_text_2.text = nList[i]
        }
  Routine Recall_practice
    TextComponent recall_text_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys_2
      Code Type = JS
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      Begin JS Experiment:
        // Store responses
        allResponses_p = []
        current_resp = '';
      Begin JS Routine:
        n = 0;
        modify = false;
        textAdd = '';
        pts_response_2.text = '';
        current_resp = '';
        console.log(pts_response_2.text)
        console.log(current_resp)
        if (pts_response_2.text === 'space'){
            pts_response_2.text = '';
            }
      Each JS Frame:
        console.log(current_resp)
        console.log(pts_response_2.text)
        console.log(n)


        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }

        if (n < 1){
            textAdd = ''
        }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pts_response_2.text = pts_response_2.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
                modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                pts_response_2.text = pts_response_2.text + textAdd.toUpperCase();
                modify = false;
            } else {
                pts_response_2.text = pts_response_2.text + textAdd
            }
            textAdd = undefined;
        }


        current_resp = pts_response_2.text
        n = n + 1
        console.log(n)
      End JS Routine:
        correct = 0;

        if (Number(current_resp) === digits_corr) {
            correct = 1;
            msg = "Correct";
            psychoJS.experiment.addData("correct", correct)
        } else {
            msg = "Incorrect";
            psychoJS.experiment.addData("Incorrect", correct)
        }
        psychoJS.experiment.addData("response", current_resp);

        allResponses_p.push(correct)
        pts_response_2.text = '';

        console.log(allResponses_p)
    TextComponent pts_response_2
      letterHeight = 0.13
      startVal [time (s)] = 0
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  Routine feedback_practice
    CodeComponent feedback_code_2
      Code Type = JS
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine code_end
    CodeComponent code_8
      Code Type = JS
      Begin JS Routine:
        console.log(allResponses_p)

        if (allResponses_p.length === 2 && allResponses_p.slice(-2).reduce((a,b)=>a+b) > 1) {
            trials_2.finished = true;
        } else if (allResponses_p.length === 2 && allResponses_p.slice(-2).reduce((a,b)=>a+b) < 2) {
            //trials.finished = true;
            allResponses_p = [];
            condition_counter = condition_counter + 1
        }

        console.log(allResponses_p)
  Routine repeat_instructions
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Remember that your job is to type the numbers you saw in the opposite order you saw them
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    CodeComponent code_9
      Code Type = JS
      Each JS Frame:
        console.log(condition_counter);
        console.log(allResponses_p.length);

        if (condition_counter === 0) {
            continueRoutine = false;
        } else if (condition_counter > 1){
            continueRoutine = false;
            } else if (condition_counter === 1 && allResponses_p.length < 2){
                continueRoutine = true;
                }else if (condition_counter === 1 && allResponses_p.slice(-2).reduce((a,b)=>a+b) > 1){
                    continueRoutine = false;
                    } else if (key_resp_6.keys === 'space') {
                        continueRoutine = false;
                        }
    KeyboardComponent key_resp_6
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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  Routine real_trials
    TextComponent get_ready_real_trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Great! Let’s start the real task
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    TextComponent press_space
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ■
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    TextComponent pres_text
      letterHeight = 0.13
      startVal [time (s)] = 1
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    CodeComponent pres_code
      Code Type = Both
      Begin JS Routine:
        // Convert sequence to list
        nList = digits.toString().split('').map((i)=>Number(i))
      Begin Routine:
        # Convert sequence to list
        nList = list(str(digits))
      Each Frame:
        # Convert time to a list index
        i = int(np.floor(t-1))

        # Index the current number in the list
        # Or end routine if all numbers presented
        if i == len(nList):
            continueRoutine = False
        else:
            pres_text.text = nList[i]
      Each JS Frame:
        // Convert time ti a list index
        i = Math.floor(t-1);

        // Index current number in the list
        // or end routine if all numbers presented

        if (i === nList.length) {
            continueRoutine = false;
        } else if (i < 0){
            pres_text.text = ' '
        } else {
            pres_text.text = nList[i]
        }
      End JS Routine:
        pres_text.text = ''
  Routine Recall
    TextComponent recall_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent check_keys
      Code Type = JS
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      Begin JS Experiment:
        // Store responses
        allResponses = []
        current_resp = ' ';
      Begin JS Routine:
        nn = 0;
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys({keyList: ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return'], waitRelease: false});
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }

        if (nn < 1){
            textAdd = '';
        }



        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'backspace') {
            pts_response.text = pts_response.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
                modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                pts_response.text = pts_response.text + textAdd.toUpperCase();
                modify = false;
            } else {
                pts_response.text = pts_response.text + textAdd
            }
            textAdd = undefined;
        }

        nn = nn + 1;
        current_resp = pts_response.text
      End JS Routine:
        correct = 0;

        if (Number(current_resp) === digits_corr) {
            correct = 1;
            msg = "Correct";
            psychoJS.experiment.addData("correct", correct)
        } else {
            msg = "Incorrect";
            psychoJS.experiment.addData("Incorrect", correct)
        }
        psychoJS.experiment.addData("response", current_resp);

        allResponses.push(correct)
        pts_response.text = '';
    TextComponent pts_response
      letterHeight = 0.13
      startVal [time (s)] = 0
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  Routine Feedback
    CodeComponent feedback_code
      Code Type = JS
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      End JS Routine:
        // Original logic:
        // for incorrect, check that two responses exist
        // and that their sum of last two responses is zero


        //Changing logic from original code
        //Now, when allResponses == 2
        //If sum of the 2 responses == 0, end experiment
        //If sum of the 2 responses is > 0 (i.e., 1 or 2), then keep going with the experiment

        console.log(allResponses.length);
        if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 2) {
            trials.finished = true;
            allResponses = [];
        } else if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 0) {
            trials.finished = true;
            blocks.finished = true;
        } else if (allResponses.length === 2 && allResponses.slice(-2).reduce((a,b)=>a+b) === 1) {
            trials.finished = false;
        } else if (allResponses.length === 3 && allResponses.slice(-2).reduce((a,b)=>a+b) === 2) {
            trials.finished = true;
            allResponses = [];
        } else if (allResponses.length === 3 && allResponses.slice(-2).reduce((a,b)=>a+b) < 2) {
            trials.finished = true;
            blocks.finished = true;
            }

        //var sum = 0;
        //for (var i = 0; i < allResponses.length; i++){
        //  sum += allResponses[i];
        //}

        //if (allResponses.length === 2 && sum === 0) {
        //    trials.finished = true;
        //    blocks.finished = true;
        //} else if (allResponses.length === 2 && sum > 0) {
        //    //trials.finished = true;
        //    allResponses = [];
        //}
  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you! This is the end of this task.
    TextComponent before_closing
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = .8
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  Routine Welcome_2
    PolygonComponent white_background_10
      fillColor = $[1,1,1]
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent text_15
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_17
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Please press 'spacebar' to continue.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroA_2
    PolygonComponent white_background_25
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image = heart_only.jpg
      interpolate = nearest
      pos = (0, -0.0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 256
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    TextComponent text_40
      color = black
      letterHeight = 0.0825
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In the third task, you will see hearts.
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    TextComponent text_46
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine IntroB_2
    PolygonComponent white_background_21
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Your job will be to press the button on the SAME side as where the heart appears.


        If the heart appears on the right, press 'm,' and if the heart appears on the left, press 'z.'
    TextComponent text_53
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Example1
    PolygonComponent white_background_14
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the heart is on the right.
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    ImageComponent image_3
      image = rightHeart.jpg
      interpolate = nearest
      pos = (0,-0.0)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_60
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'm'
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  Routine Example2
    PolygonComponent white_background_12
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the heart is on the left.
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    ImageComponent image_4
      image = leftHeart.jpg
      interpolate = nearest
      pos = (0, -0.0)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_61
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z'
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  Routine Quick_Reminder
    PolygonComponent white_background_19
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_71
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The hearts will appear very quickly.
        Try to be as fast as you can and try your
        best!
    KeyboardComponent key_resp_32
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_72
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_congruent
    PolygonComponent white_background_7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice!
    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue. 
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    KeyboardComponent key_resp_13
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_trial_congruent
    PolygonComponent white_background_17
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_22
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_64
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_5
      image [set every repeat] = $Heart
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_14
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_10
      Code Type = JS
      Begin JS Routine:
        var color_msg_incongruent01;
        var msg_incongruent01;
      End JS Routine:
          if (key_resp_14.keys === undefined) {
              msg_incongruent01 = 'No response'
              color_msg_incongruent01 = 'black'
              } else {
              if (key_resp_14.corr > 0){
                  msg_incongruent01 = 'Correct'
                  color_msg_incongruent01 = 'green'
              } else {
                  msg_incongruent01 = 'Incorrect'
                  color_msg_incongruent01 = 'red'
              }
              }
  Routine feedback_hf_congruent_1
    PolygonComponent white_background_33
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_108
      color [set every repeat] = $color_msg_incongruent01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent01
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  Routine congruent_reminder
    PolygonComponent white_background_41
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_102
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Remember! Your job is to press the button on the SAME side as where the heart appears.

        If the heart appears on the right, press 'm,' and if the heart appears on the left, press 'z.'
    TextComponent text_103
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_17
      Code Type = JS
      Begin JS Experiment:
        var eachResp;
        eachResp=0;
      Begin JS Routine:
        nCorrhf01 = 0;
        console.log("hf_congruent02")
        console.log(nCorrhf01)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_14.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf01 += psychoJS.experiment._trialsData[eachResp]['key_resp_14.corr'];
            }
          }


        console.log("hf_congruent02")
        console.log(nCorrhf01)
      Each JS Frame:
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_37.keys === 'space') {
            continueRoutine = false;
            }
        else {
            console.log("false")
            continueRoutine = true;
            }
  Routine Practice_trial_congruent_2
    PolygonComponent white_background_32
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_93
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_94
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_13
      image [set every repeat] = $Heart
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_95
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_21
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_11
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent02;
        var color_msg_incongruent02;

        console.log("hf_congruent02")
        console.log(nCorrhf01)
      Each JS Frame:
        var msg_incongruent02;
        var color_msg_incongruent02;

        console.log("hf_congruent02")
        console.log(nCorrhf01)
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_21.keys === undefined) {
              msg_incongruent02 = 'No Response'
              color_msg_incongruent02 = 'black'
              } else {
              if (key_resp_21.corr > 0){
                  msg_incongruent02 = 'Correct'
                  color_msg_incongruent02 = 'green'
              } else {
                  msg_incongruent02 = 'Incorrect'
                  color_msg_incongruent02 = 'red'
              }
              }
  Routine feedback_hf_congruent_2
    PolygonComponent white_background_34
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_114
      color [set every repeat] = $color_msg_incongruent02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent02
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    CodeComponent code_18
      Code Type = JS
      Each JS Frame:
        console.log("hf_congruent02")
        console.log(nCorrhf01)
        if (nCorrhf01 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready
    PolygonComponent white_background_30
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.


        Remember, when the heart appears on the left, press 'z' and when the heart appears on the right, press 'm.'
    KeyboardComponent key_resp_15
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Hearts
    PolygonComponent white_background_6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_23
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_65
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent hearts
      image [set every repeat] = $Hearts
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent heart_resp
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine IntroA_3
    PolygonComponent white_background_26
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_32
      color = black
      letterHeight = 0.0825
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Great job! In this next task, you will see flowers.
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_33
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    ImageComponent image_12
      image = flower_only.jpg
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine IntroB_3
    PolygonComponent white_background_20
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_47
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Your job will be to press the button on the OPPOSITE side of where the flower appears.


        If the flower appears on the right, press 'z,' and if the flower appears on the left, press 'm.'
    TextComponent text_34
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example3
    PolygonComponent white_background_13
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_35
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the flower is on the right.
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    ImageComponent image_6
      image = rightFlower.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_62
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z'
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  Routine Example4
    PolygonComponent white_background_11
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_36
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In this example, the flower is on the left.
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    ImageComponent image_7
      image = leftFlower.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_19
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_63
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'm'
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  Routine Quick_Reminder_Incongruent
    PolygonComponent white_background_28
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_75
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The flowers will appear very quickly.
        Try to be as fast as you can and try your best!
    KeyboardComponent key_resp_34
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_76
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_Incongruent
    PolygonComponent white_background_8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_37
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Let's practice!
    TextComponent text_38
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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    KeyboardComponent key_resp_20
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_trial_incongruent
    PolygonComponent white_background_22
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_39
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_66
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_8
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_48
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_22
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_12
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent01;
        var color_msg_incongruent01;
      End JS Routine:
          if (key_resp_22.keys === undefined) {
              msg_incongruent01 = 'No Response'
              color_msg_incongruent01 = 'black'
              } else {
              if (key_resp_22.corr > 0){
                  msg_incongruent01 = 'Correct'
                  color_msg_incongruent01 = 'green'
              } else {
                  msg_incongruent01 = 'Incorrect'
                  color_msg_incongruent01 = 'red'
              }
              }
  Routine feedback_hf_incongruent_1
    PolygonComponent white_background_38
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_113
      color [set every repeat] = $color_msg_incongruent01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent01
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  Routine incongruent_reminder
    PolygonComponent white_background_42
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_104
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Remember! Your job is to press the button on the OPPOSITE side of where the flower appears.

        If the flower appears on the right, press 'z,' and if the flower appears on the left, press 'm.'
    TextComponent text_105
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_38
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = JS
      Begin JS Experiment:
        var nCorrhf02;
      Begin JS Routine:
        nCorrhf02 = 0;
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_22.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf02 += psychoJS.experiment._trialsData[eachResp]['key_resp_22.corr'];
            }
          }
      Each JS Frame:
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_38.keys === 'space') {
            continueRoutine = false; // until we're told otherwise
                }
        else {
            console.log("false")
            continueRoutine = true;
            }
      End JS Routine:
        if (key_resp_38.keys === 'space') {
            continueRoutine = false; // until we're told otherwise
                }
  Routine Practice_trial_incongruent_2
    PolygonComponent white_background_35
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_96
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_97
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_14
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_98
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_23
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_13
      Code Type = JS
      Begin JS Routine:
        var msg_incongruent02;
        var color_msg_incongruent02 ;

        console.log("hf_incongruent02")
        console.log(nCorrhf02)
      Each JS Frame:
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_23.keys === undefined) {
              msg_incongruent02 = 'No Response'
              color_msg_incongruent02 = 'black'
              } else {
              if (key_resp_23.corr > 0){
                  msg_incongruent02 = 'Correct'
                  color_msg_incongruent02 = 'green'
              } else {
                  msg_incongruent02 = 'Incorrect'
                  color_msg_incongruent02 = 'red'
              }
              }
  Routine feedback_hf_incongruent_2
    PolygonComponent white_background_37
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_112
      color [set every repeat] = $color_msg_incongruent02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_incongruent02
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    CodeComponent code_20
      Code Type = JS
      Begin JS Routine:
        console.log("hf_incongruent02")
        console.log(nCorrhf02)
      Each JS Frame:
        if (nCorrhf02 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready2
    PolygonComponent white_background_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_49
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.


        Remember, when the flower appears on the left, press 'm,' and when the flower appears on the right, press 'z.'
    TextComponent text_50
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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    KeyboardComponent key_resp_24
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Flowers
    PolygonComponent white_background_16
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_51
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_67
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_25
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine IntroA_4
    PolygonComponent white_background_27
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_55
      color = black
      letterHeight = 0.0825
      startVal [time (s)] = 0.0
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      text:
        Great job!
        Now in this last task, we'll put it all together.
    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_56
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        Press 'spacebar' to continue.
  Routine IntroB_5
    PolygonComponent white_background_18
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_57
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this next task, you'll see both hearts and flowers. 
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    TextComponent text_58
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue. 
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroC_11
    PolygonComponent white_background_23
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_69
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        If you see a heart, press the button on the SAME side as the heart appears.


        If the heart appears on the right, press 'm,' and if the heart appears on the left, press 'z.'
    TextComponent text_70
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroC_2
    PolygonComponent white_background_24
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you see a flower, press the button on the OPPOSITE side of where the flower appears.


        If the flower appears on the right, press 'z,' and if the flower appears on the left, press 'm.'
    TextComponent text_74
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Quick_Reminder_Mixed
    PolygonComponent white_background_29
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_77
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Remember, try to be as fast and accurate as you can.
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    KeyboardComponent key_resp_33
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_78
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_mixed
    PolygonComponent white_background_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Let's practice!
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    KeyboardComponent key_resp_35
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_80
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue.
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  Routine Practice_trial_mixed
    PolygonComponent white_background_15
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_81
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_82
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_9
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_83
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_36
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_14
      Code Type = JS
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      Begin JS Routine:
        var msg_mixed01;
        var color_msg_mixed01;
      End JS Routine:
          if (key_resp_36.keys === undefined) {
              msg_mixed01 = 'No response'
              color_msg_mixed01 = 'black'
              } else {
              if (key_resp_36.corr > 0){
                  msg_mixed01 = 'Correct'
                  color_msg_mixed01 = 'green'
              } else {
                  msg_mixed01 = 'Incorrect'
                  color_msg_mixed01 = 'red'
              }
              }
  Routine feedback_hf_mixed_1
    PolygonComponent white_background_39
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_110
      color [set every repeat] = $color_msg_mixed01
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_mixed01
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  Routine reminder_mixed
    PolygonComponent white_background_43
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_106
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Remember! If you see a heart, press the button on the SAME side as the heart appears.

        If you see a flower, press the button on the OPPOSITE side of where the flower appears.
    TextComponent text_107
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'spacebar' to continue.
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    KeyboardComponent key_resp_39
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = JS
      Begin JS Experiment:
        var nCorrhf03;
      Begin JS Routine:
        nCorrhf03 = 0;
        console.log("hf_mixed03")
        console.log(nCorrhf03)
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('key_resp_36.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorrhf03 += psychoJS.experiment._trialsData[eachResp]['key_resp_36.corr'];
            }
          }
      Each JS Frame:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            }
        else if (key_resp_39.keys === 'space') {
                continueRoutine = false;
                }
        else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Practice_trial_mixed_2
    PolygonComponent white_background_36
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_99
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_100
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_15
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_101
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_40
      allowedKeys = 'z','m'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent code_15
      Code Type = JS
      Begin JS Routine:
        var color_msg_mixed02;
        var msg_mixed02;
      Each JS Frame:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
      End JS Routine:
          if (key_resp_40.keys === undefined) {
              msg_mixed02 = 'No response'
              color_msg_mixed02 = 'black'
              } else {
              if (key_resp_40.corr > 0){
                  msg_mixed02 = 'Correct'
                  color_msg_mixed02 = 'green'
              } else {
                  msg_mixed02 = 'Incorrect'
                  color_msg_mixed02 = 'red'
              }
              }
  Routine feedback_hf_mixed_2
    PolygonComponent white_background_40
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_109
      color [set every repeat] = $color_msg_mixed02
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg_mixed02
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    CodeComponent code_22
      Code Type = JS
      Begin JS Routine:
        console.log("hf_mixed03")
        console.log(nCorrhf03)
      Each JS Frame:
        if (nCorrhf03 > 5) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
  Routine Ready3
    PolygonComponent white_background_4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_84
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Let's play for real now.


        Remember, press the button on the SAME side as the heart.


        And press the button on the OPPOSITE side of the flower.
    KeyboardComponent key_resp_41
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_85
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 'z' or 'm' to continue. 
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  Routine mixed_first
    PolygonComponent white_background_9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_86
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_87
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_10
      image = rightHeart.jpg
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_88
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_42
      allowedKeys = 'z','m'
      correctAns = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine Mixed
    PolygonComponent white_background_5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.25
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    TextComponent text_89
      color = black
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_90
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $Hearts_Flowers
      interpolate = nearest
      size = (0.8, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
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    TextComponent text_91
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_43
      allowedKeys = 'z', 'm'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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  Routine Thank_You
    PolygonComponent white_background_31
      fillColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_92
      color = black
      letterHeight = 0.1
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Great! This is the end of this task
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    TextComponent text_111
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      wrapWidth = 0.8
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  Routine welcome
    TextComponent text_122
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent text_123
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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    KeyboardComponent key_resp_52
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_3
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The fourth task is an unusual one. Instead of telling you the rules, you have to figure them out.
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    KeyboardComponent key_resp_53
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_124
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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  Routine Example
    TextComponent example_text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = You will see a screen like this:
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    ImageComponent example
      image = example.jpg
      pos = (0, 0.15)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent example_text_2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Your job is to click on one of the four cards at the top you think is related to the one presented in the middle of the screen.  You will receive feedback on each trial. If you choose the right card, you will see a message saying ‘correct.’ If you choose the incorrect one, you will see a message saying ‘incorrect.’
        Press ‘space bar’ to continue.
    KeyboardComponent key_resp_54
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lets_practice
    TextComponent text_125
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Let’s practice
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    KeyboardComponent key_resp_55
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_126
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ continue
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  Routine trials_practice_2
    TextComponent fixation_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent one_red_dot_2
      image = images/one_red_dot.jpg
      pos = (-0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent two_yellow_triangles_2
      image = images/two_yellow_triangles.jpg
      pos = (-0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent three_green_crosses_2
      image = images/three_green_crosses.jpg
      pos = (0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent four_blue_stars_2
      image = images/four_blue_stars.jpg
      pos = (0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent trial_card_2
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = .5
      texture resolution = 512
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    CodeComponent response_code_2
      Code Type = JS
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      Before JS Experiment:
        var timer_practice_wcst = '';
        var beginning_practice_wcst = '';
      Begin JS Routine:
        corr = 0;
        timer_practice_wcst = new util.Clock();
        beginning_practice_wcst = timer_practice_wcst.getTime();
      Each JS Frame:
        var current_practice_wcst = timer_practice_wcst.getTime();
        var allow_practice_wcst = (current_practice_wcst - beginning_practice_wcst);
        console.log(allow_practice_wcst)
        if(allow_practice_wcst < .499){
            continueRoutine = true;
            } else {
                for (var stimulus, _pj_c = 0, _pj_a = [one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    stimulus = _pj_a[_pj_c];
                    if (response_2.isPressedIn(stimulus)) {
                        var corrAnsMaybe = 'images/' + stimulus.name + '.jpg';
                        console.log(stimulus.name, corrAns, corrAnsMaybe === corrAns);
                        if ((corrAnsMaybe === corrAns)) {
                            corr = 1;
                            }
                        psychoJS.experiment.addData("correct", corr);
                        psychoJS.experiment.addData("wcst_rt", allow_practice_wcst);
                        continueRoutine = false;
            }
        }
        }
    MouseComponent response_2
      clickable = one_red_dot_2, two_yellow_triangles_2, three_green_crosses_2, four_blue_stars_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine feedback_practice_2
    CodeComponent feedback_code_3
      Code Type = Both
      Begin Experiment:
        msg = ''
      Begin JS Experiment:
        msg = "";

        trial_counter = 0;
        corr = 0 ;

        corr_trial_counter = 0;

        prev = 0;
      Begin JS Routine:
        if ((corr === 1)) {
            msg = "Correct!";
        } else {
            msg = "Incorrect";
        }
      Begin Routine:
        if (corr == 1):
            msg="Correct! "
        else:
            msg="Incorrect"
      End JS Routine:
        trial_counter = 0;
        condition_counter = 0;
      End Routine:
        if (trials.thisTrialN) == 21:
            trials.finished = True
    TextComponent feedback_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine ready
    TextComponent text_127
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Now, you will start the task.
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    TextComponent text_128
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press ‘space bar’ to continue
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    KeyboardComponent key_resp_56
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_meta_2
    CodeComponent code_26
      Code Type = Both
      Begin JS Experiment:
        trial_counter = 0;
        condition_counter = 0;
  Routine Trials
    TextComponent fixation_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent one_red_dot
      image = images/one_red_dot.jpg
      pos = (-0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent two_yellow_triangles
      image = images/two_yellow_triangles.jpg
      pos = (-0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent three_green_crosses
      image = images/three_green_crosses.jpg
      pos = (0.15, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent four_blue_stars
      image = images/four_blue_stars.jpg
      pos = (0.45, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    ImageComponent trial_card
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
      texture resolution = 512
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    CodeComponent response_code
      Code Type = JS
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      Before JS Experiment:
        var timer_wcst = '';
        var beginning_wcst = '';
      Begin JS Routine:
        corr = 0;
        timer_wcst = new util.Clock();
        beginning_wcst = timer_wcst.getTime();
      Each JS Frame:
        var current_wcst = timer_wcst.getTime();
        var allow_wcst = (current_wcst - beginning_wcst);
        console.log(allow_wcst)
        if(allow_wcst < .499){
            continueRoutine = true;
            } else {
                for (var stimulus, _pj_c = 0, _pj_a = [one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    stimulus = _pj_a[_pj_c];
                    if (response.isPressedIn(stimulus)) {
                        var corrAnsMaybe = 'images/' + stimulus.name + '.jpg';
                        console.log(stimulus.name, corrAns, corrAnsMaybe === corrAns);
                        if ((corrAnsMaybe === corrAns)) {
                            corr = 1;
                            }
                        var end_wcst = timer_wcst.getTime();
                        var time_wcst_trial = (end_wcst - beginning_wcst);
                        psychoJS.experiment.addData("wcst_rt", time_wcst_trial);
                        psychoJS.experiment.addData("correct", corr);
                        continueRoutine = false;
            }
        }
        }
    MouseComponent response
      clickable = one_red_dot, two_yellow_triangles, three_green_crosses, four_blue_stars
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine Feedback_2
    CodeComponent feedback_code_4
      Code Type = Both
      Begin Experiment:
        msg = ''
      Begin JS Experiment:
        msg = "";

        trial_counter = 0;
        corr = 0 ;

        corr_trial_counter = 0;

        prev = 0;
      Begin JS Routine:
        if ((corr === 1)) {
            msg = "Correct! ";
        } else {
            msg = "Incorrect";
        }
      Begin Routine:
        if (corr == 1):
            msg="Correct! "
        else:
            msg="Incorrect"
      End JS Routine:
        if((trial_counter === 0 && corr === 1)){
            corr_trial_counter = 1;
            prev = 1;
        } else if ((trial_counter === 0 && corr === 0)) {
            corr_trial_counter = 0;
            prev = 0;
        } else if ((trial_counter > 0 && corr === 1)){
            if((prev === 1)){
                corr_trial_counter = corr_trial_counter + 1;
                prev = 1;
            } else {
                corr_trial_counter = 1;
                prev =1;}
        } else {
            corr_trial_counter = 0;
            prev = 0;
        }

        console.log(corr_trial_counter);
        console.log(trial_counter);
        trial_counter = (trial_counter + 1);
        console.log(trial_counter);

        psychoJS.experiment.addData("trial_counter", trial_counter);

        if ((corr_trial_counter === 6)) {
            trials_3.finished = true;
            condition_counter = condition_counter + 1
            corr_trial_counter = 0
            console.log(corr_trial_counter);
            console.log(condition_counter);
        }

        if ((trial_counter === 40)){
            trials_3.finished = true;
            }
      End Routine:
        if (trials.thisTrialN) == 21:
            trials.finished = True
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine code_end_2
    CodeComponent code_ending
      Code Type = Both
      Begin JS Routine:
        console.log(condition_counter)
        console.log(trial_counter)
        if ((condition_counter > 3)) {
            blocks_2.finished = true;
        } else if ((trial_counter === 40)){
            blocks_2.finished = true;
        } else {
            blocks_2.finished = false;
        }
  Routine End_2
    TextComponent thank_you_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Great! You have finished all the tasks.
        Please, DO NOT close the window browser until you have seen the following message. Then, click on OK to be directed to the next task.
    TextComponent end
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 0.8
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    CodeComponent code_27
      Code Type = JS
      End JS Routine:
        var end_exp = timer_exp.getTime();
        var time_exp = (end_exp - beginning_exp2);
        console.log(time_exp);
        psychoJS.experiment.addData("totaltime_exp", time_exp);
    ImageComponent image_16
      image = ef_math_saving_message.png
      pos = (0, -0.04)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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  Routine overal_ef_assessment_instructions
    TextComponent text_130
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Today, you will complete five computer tasks.
        However, if you need to exit the session at any given moment, please press escape twice and wait until you see this popup window before you close the window browser.
    TextComponent text_131
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press space bar to continue.
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    KeyboardComponent key_resp_57
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_29
      image = ef_math_saving_message.png
      pos = (0, -0.025)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine tol_welcome
    PolygonComponent light_gray_bg_6
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_129
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        This is the last task and will take about 6 minutes. Click on NEXT to continue
    MouseComponent mouse_8
      clickable = check_box_welcome
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_welcome
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_next_wel
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine tol_explanation
    PolygonComponent light_gray_bg_7
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_6
      disabled = True
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_13
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_14
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_15
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_5
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_5
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos = (0.35, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_5
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (0.113, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_4
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_4
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_4
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = check_box_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_4
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_exp
      color = black
      letterHeight = 0.035
      pos = (0, .30)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        During this task, two boards will be presented at a time. The boards will show colored balls arranged on pegs.
        Imagine that these balls have holes through them and the pegs are going through the holes. Notice that the first peg can hold three balls, the second peg can hold two balls, and the third peg can hold one ball.
    PolygonComponent greent1m2_4
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (-.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_4
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_4
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_2
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_132
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextComponent text_133
      letterHeight = 0.04
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Your board
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    TextComponent text_134
      letterHeight = 0.04
      pos = (0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Target board
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  Routine tol_instructions
    PolygonComponent light_gray_bg_8
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_7
      disabled = True
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_16
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_17
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_18
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_6
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_6
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos = (0.35, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_6
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (0.113, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_10
      clickable = check_box_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_5
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_exp_2
      color = black
      letterHeight = 0.035
      pos = (0, .3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Your task is to match the arrangement of balls shown on the target board in the fewest possible moves.
        The balls on your board are moveable, but the ones on the target board are not. You have to move them to make your board look like the target board. Sometimes you will have to move a ball to a different peg in order to get to the ball below it. Keep in mind that you want to make the fewest possible moves.
    PolygonComponent greent1m2_5
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (-.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_5
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_5
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_3
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_135
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextComponent text_136
      letterHeight = 0.04
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Your board
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    TextComponent text_137
      letterHeight = 0.04
      pos = (0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Target board
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  Routine tol_example
    PolygonComponent light_gray_bg_9
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_8
      disabled = True
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_8
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_19
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_20
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_21
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_7
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_7
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos = (0.35, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_7
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (0.113, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_8
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_11
      clickable = check_box_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_6
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_exp_3
      color = black
      letterHeight = 0.035
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Here is an example. Notice that the balls in your board are in a different arrangement than in the target board. If we move the green ball from the first peg in your board to the third peg then it would look like the target board.
      wrapWidth = 1.3
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    PolygonComponent greent1m2_6
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (-.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_6
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_6
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_4
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_138
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextComponent text_139
      letterHeight = 0.04
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Your board
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    TextComponent text_140
      letterHeight = 0.04
      pos = (0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Target board
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  Routine tol_prepractice
    PolygonComponent light_gray_bg_10
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_9
      disabled = True
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_9
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_22
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_23
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_24
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_8
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_8
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos = (0.35, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_8
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (0.113, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_9
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_12
      clickable = check_box_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_7
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_exp_4
      color = black
      letterHeight = 0.035
      pos = (0, .3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        During the task you will move the balls on your board by clicking on the pegs. When you click on a peg, the top ball will move into a grey box. You will have to click on that box and then click on another peg to move the ball to the top of that peg.
        If you try to select a peg with no balls or try to place a ball on a full peg, nothing will happen. If you successfully make your board look like the target board, the trial will end and you will move to the next problem.
    PolygonComponent greent1m2_7
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (-.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_7
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_7
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_5
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_141
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextComponent text_142
      letterHeight = 0.04
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Your board
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    TextComponent text_143
      letterHeight = 0.04
      pos = (0.35, -0.25)
      startVal [time (s)] = 0.0
      text = Target board
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    TextComponent text_144
      color = black
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = We will start with an easy practice example.
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
  Routine tol_next_trial
    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        msg_next = ''
        if counter2 > 0:
            if counter2 > 1:
                if timer_t1 > 120:
                    msg_next ='Try to be faster next time\nLet’s try another target board!'
                else:
                    msg_next ='Great job! \nLet’s try another target board!'
            else:
                if timer_t1 > 120:
                    msg_next ='Try to be faster next time\nLet’s start with the real task!'
                else:
                    msg_next ='Great job! \nLet’s start with the real task!'
      Each Frame:
        if counter2 > 0:
            if timer_t1 > 120:
                #msg_next ='Try to be faster next time\nLet’s try another target board!'
                continueRoutine=True
            else:
                #msg_next ='Great job! \nLet’s try another target board!'
                continueRoutine=True
        else:
            continueRoutine=False
    PolygonComponent light_gray_bg_13
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_146
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_next
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    MouseComponent mouse_15
      clickable = check_box_trial
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent check_box_trial
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.587, -0.35)
      shape = rectangle
      size = (0.125, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_next_wel_3
      color = black
      letterHeight = 0.025
      pos = (0.587, -0.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine first_movement
    MouseComponent mouse_3
      clickable = bart1m1_lefta,  bart1m1_leftb, bart1m1_leftc
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent light_gray_bg
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_01
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_02
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_03
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $right_greenpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos [set every repeat] = $right_redpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $right_bluepos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent ball_hand_box
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_left
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m1_lefta
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m1_leftb
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m1_leftc
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent greent1m1
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = [-.587, -.06]
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m1
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m1
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_29
      Code Type = JS
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      Begin JS Experiment:
        counter = 0;
        counter2 = 0;
        bluepos_orig = bluet1m1.pos;
        redpos_orig = redt1m1.pos;
        greenpos_orig = greent1m1.pos;
        bluepos = [];
        greenpos = [];
        redpos = [];
      Begin JS Routine:
        if ((counter < 1)) {
            bluet1m1.setPos(left_bluepos_orig);
            redt1m1.setPos(left_redpos_orig);
            greent1m1.setPos(left_greenpos_orig);
            timer = new util.Clock();
            beginning_t1 = timer.getTime();
            console.log(beginning_t1);
        } else {
            bluet1m1.setPos(bluepos);
            redt1m1.setPos(redpos);
            greent1m1.setPos(greenpos);
        }
      Each JS Frame:
        if ((mouse_3.getPressed()[0] !== 0)) {
            if (mouse_3.isPressedIn(bart1m1_leftc)) {
                if (((fixedt1m1_a3.pos[0] === greent1m1.pos[0]) && (fixedt1m1_a3.pos[1] === greent1m1.pos[1]))) {
                    greenpos = [(- 0.35), 0.3];
                    console.log("a");
                    continueRoutine = false;
                } else {
                    if (((fixedt1m1_a3.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_a3.pos[1] === bluet1m1.pos[1]))) {
                        bluepos = [(- 0.35), 0.3];
                        continueRoutine = false;
                        console.log("b");
                    } else {
                        if (((fixedt1m1_a3.pos[0] === redt1m1.pos[0]) && (fixedt1m1_a3.pos[1] === redt1m1.pos[1]))) {
                            redpos = [(- 0.35), 0.3];
                            continueRoutine = false;
                        } else {
                            if (((fixedt1m1_a2.pos[0] === greent1m1.pos[0]) && (fixedt1m1_a2.pos[1] === greent1m1.pos[1]))) {
                                greenpos = [(- 0.35), 0.3];
                                continueRoutine = false;
                                console.log("c");
                            } else {
                                if (((fixedt1m1_a2.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_a2.pos[1] === bluet1m1.pos[1]))) {
                                    bluepos = [(- 0.35), 0.3];
                                    continueRoutine = false;
                                    console.log("d");
                                } else {
                                    if (((fixedt1m1_a2.pos[0] === redt1m1.pos[0]) && (fixedt1m1_a2.pos[1] === redt1m1.pos[1]))) {
                                        redpos = [(- 0.35), 0.3];
                                        continueRoutine = false;
                                        console.log("e");
                                    } else {
                                        if (((fixedt1m1_a1.pos[0] === greent1m1.pos[0]) && (fixedt1m1_a1.pos[1] === greent1m1.pos[1]))) {
                                            greenpos = [(- 0.35), 0.3];
                                            continueRoutine = false;
                                            console.log("f");
                                        } else {
                                            if (((fixedt1m1_a1.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_a1.pos[1] === bluet1m1.pos[1]))) {
                                                bluepos = [(- 0.35), 0.3];
                                                continueRoutine = false;
                                                console.log("g");
                                            } else {
                                                if (((fixedt1m1_a1.pos[0] === redt1m1.pos[0]) && (fixedt1m1_a1.pos[1] === redt1m1.pos[1]))) {
                                                    redpos = [(- 0.35), 0.3];
                                                    continueRoutine = false;
                                                    console.log("h");
                                                } else {
                                                    console.log("nothing");
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
            if (mouse_3.isPressedIn(bart1m1_leftb)) {
                if (((fixedt1m1_b2.pos[0] === greent1m1.pos[0]) && (fixedt1m1_b2.pos[1] === greent1m1.pos[1]))) {
                    greenpos = [(- 0.35), 0.3];
                    continueRoutine = false;
                    console.log("i");
                } else {
                    if (((fixedt1m1_b2.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_b2.pos[1] === bluet1m1.pos[1]))) {
                        bluepos = [(- 0.35), 0.3];
                        continueRoutine = false;
                        console.log("j");
                    } else {
                        if (((fixedt1m1_b2.pos[0] === redt1m1.pos[0]) && (fixedt1m1_b2.pos[1] === redt1m1.pos[1]))) {
                            redpos = [(- 0.35), 0.3];
                            continueRoutine = false;
                            console.log("k");
                        } else {
                            if (((fixedt1m1_b1.pos[0] === greent1m1.pos[0]) && (fixedt1m1_b1.pos[1] === greent1m1.pos[1]))) {
                                greenpos = [(- 0.35), 0.3];
                                continueRoutine = false;
                                console.log("l");
                            } else {
                                if (((fixedt1m1_b1.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_b1.pos[1] === bluet1m1.pos[1]))) {
                                    bluepos = [(- 0.35), 0.3];
                                    continueRoutine = false;
                                    console.log("m");
                                } else {
                                    if (((fixedt1m1_b1.pos[0] === redt1m1.pos[0]) && (fixedt1m1_b1.pos[1] === redt1m1.pos[1]))) {
                                        redpos = [(- 0.35), 0.3];
                                        continueRoutine = false;
                                        console.log("n");
                                    } else {
                                        console.log("nothing");
                                    }
                                }
                            }
                        }
                    }
                }
            }
            if (mouse_3.isPressedIn(bart1m1_lefta)) {
                if (((fixedt1m1_c1.pos[0] === greent1m1.pos[0]) && (fixedt1m1_c1.pos[1] === greent1m1.pos[1]))) {
                    greenpos = [(- 0.35), 0.3];
                    continueRoutine = false;
                    console.log("o");
                } else {
                    if (((fixedt1m1_c1.pos[0] === bluet1m1.pos[0]) && (fixedt1m1_c1.pos[1] === bluet1m1.pos[1]))) {
                        bluepos = [(- 0.35), 0.3];
                        continueRoutine = false;
                        console.log("p");
                    } else {
                        if (((fixedt1m1_c1.pos[0] === redt1m1.pos[0]) && (fixedt1m1_c1.pos[1] === redt1m1.pos[1]))) {
                            redpos = [(- 0.35), 0.3];
                            continueRoutine = false;
                            console.log("q");
                        } else {
                            console.log("nothing");
                        }
                    }
                }
            }
        }
      End JS Routine:
        if ((greenpos.length !== 0.0)) {
            if ((greenpos[1] === 0.3)) {
                greenpos = greenpos;
            } else {
                greenpos = greent1m1.pos;
                console.log("check1");
            }
        } else {
            greenpos = greent1m1.pos;
        }
        if ((redpos.length !== 0.0)) {
            if ((redpos[1] === 0.3)) {
                redpos = redpos;
            } else {
                redpos = redt1m1.pos;
                console.log("check1");
            }
        } else {
            redpos = redt1m1.pos;
        }
        if ((bluepos.length !== 0.0)) {
            if ((bluepos[1] === 0.3)) {
                bluepos = bluepos;
            } else {
                bluepos = bluet1m1.pos;
                console.log("check1");
            }
        } else {
            bluepos = bluet1m1.pos;
        }
    PolygonComponent fixedt1m1_a1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m1_a2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m1_a3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m1_b1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m1_b2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m1_c1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_147
      color = green
      disabled = True
      letterHeight = 0.10
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter
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    TextComponent text_148
      color = black
      letterHeight = 0.025
      pos = (-0.35, 0.18)
      startVal [time (s)] = 0.0
      text = Choose the ball
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  Routine check_step1_t1
    PolygonComponent light_gray_bg_5
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_5
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_10
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_11
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_12
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_4
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $right_greenpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_4
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos [set every repeat] = $right_redpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_4
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $right_bluepos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_3
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_3
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_3
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = ball_hand_box_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_149
      color = black
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter
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    PolygonComponent greent1m2_3
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $greenpos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_3
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos [set every repeat] = $redpos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_3
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $bluepos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_150
      color = black
      letterHeight = 0.025
      pos = (-0.35, 0.18)
      startVal [time (s)] = 0.0
      text = Press the grey box
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  Routine second_mov
    PolygonComponent light_gray_bg_3
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_3
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_3
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_2
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_5
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_6
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_2
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $right_greenpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_2
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos [set every repeat] = $right_redpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_2
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $right_bluepos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_3
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = bart1m2_lefta, bart1m2_leftb, bart1m2_leftc
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        print(greenpos)
        print(redpos)
        print(bluepos)

        if greenpos[1] == .3:
           greent1m2.setPos([-0.35, 0.3])
           print('test2')
           redt1m2.setPos(redpos)
           bluet1m2.setPos(bluepos)
        elif redpos[1] == .3:
           redt1m2.setPos([-0.35, 0.3])
           print('test3')
           greent1m2.setPos(greenpos)
           bluet1m2.setPos(bluepos)
        elif bluepos[1] == .3:
           bluet1m2.setPos([-0.35, 0.3])
           greent1m2.setPos(greenpos)
           redt1m2.setPos(redpos)
           print('test4')
        else:
            print('nothing2')
      Each Frame:
        #print(greenpos)
        if ball_hand_box_3.pos[0]==greent1m2.pos[0] and ball_hand_box_3.pos[1]==greent1m2.pos[1]:
            if mouse_4.isPressedIn(bart1m2_lefta):
                if (fixedt1m2_a2.pos[0]==redt1m2.pos[0] and fixedt1m2_a2.pos[1]==redt1m2.pos[1]) or (fixedt1m2_a2.pos[0]==bluet1m2.pos[0] and fixedt1m2_a2.pos[1]==bluet1m2.pos[1]):
                    greenpos = fixedt1m2_a3.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("first 3")
                elif (fixedt1m2_a1.pos[0]==redt1m2.pos[0] and fixedt1m2_a1.pos[1]==redt1m2.pos[1]) or (fixedt1m2_a1.pos[0]==bluet1m2.pos[0] and fixedt1m2_a1.pos[1]==bluet1m2.pos[1]):
                    greenpos = fixedt1m2_a2.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("first 2")
                else:
                    greenpos = fixedt1m2_a1.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("first 1")
            if mouse_4.isPressedIn(bart1m2_leftb):
                if(fixedt1m2_b2.pos[0]==redt1m2.pos[0] and fixedt1m2_b2.pos[1]==redt1m2.pos[1]) or (fixedt1m2_b2.pos[0]==bluet1m2.pos[0] and fixedt1m2_b2.pos[1]==bluet1m2.pos[1]):
                    print('nothing')
                elif (fixedt1m2_b1.pos[0]==redt1m2.pos[0] and fixedt1m2_b1.pos[1]==redt1m2.pos[1]) or (fixedt1m2_b1.pos[0]==bluet1m2.pos[0] and fixedt1m2_b1.pos[1]==bluet1m2.pos[1]):
                    greenpos = fixedt1m2_b2.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("second")
                else:
                    greenpos = fixedt1m2_b1.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("third")
            elif mouse_4.isPressedIn(bart1m2_leftc):
                if (fixedt1m2_c1.pos[0]==redt1m2.pos[0] and fixedt1m2_c1.pos[1]==redt1m2.pos[1]) or (fixedt1m2_c1.pos[0]==bluet1m2.pos[0] and fixedt1m2_c1.pos[1]==bluet1m2.pos[1]):
                    print('nothing green')
                else:
                    greenpos = fixedt1m2_c1.pos
                    redpos = redt1m2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("forth")

        if ball_hand_box_3.pos[0]==redt1m2.pos[0] and ball_hand_box_3.pos[1]==redt1m2.pos[1]:
            if mouse_4.isPressedIn(bart1m2_lefta):
                if (fixedt1m2_a2.pos[0]==greent1m2.pos[0] and fixedt1m2_a2.pos[1]==greent1m2.pos[1]) or (fixedt1m2_a2.pos[0]==bluet1m2.pos[0] and fixedt1m2_a2.pos[1]==bluet1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_a3.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red 3")
                elif (fixedt1m2_a1.pos[0]==greent1m2.pos[0] and fixedt1m2_a1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_a1.pos[0]==bluet1m2.pos[0] and fixedt1m2_a1.pos[1]==bluet1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_a2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red 2")
                else:
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_a1.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red 1")
            if mouse_4.isPressedIn(bart1m2_leftb):
                if(fixedt1m2_b2.pos[0]==greent1m2.pos[0] and fixedt1m2_b2.pos[1]==greent1m2.pos[1]) or (fixedt1m2_b2.pos[0]==bluet1m2.pos[0] and fixedt1m2_b2.pos[1]==bluet1m2.pos[1]):
                    print('nothing red')
                elif (fixedt1m2_b1.pos[0]==greent1m2.pos[0] and fixedt1m2_b1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_b1.pos[0]==bluet1m2.pos[0] and fixedt1m2_b1.pos[1]==bluet1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_b2.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red second")
                else:
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_b1.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red third")
            elif mouse_4.isPressedIn(bart1m2_leftc):
                if (fixedt1m2_c1.pos[0]==greent1m2.pos[0] and fixedt1m2_c1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_c1.pos[0]==bluet1m2.pos[0] and fixedt1m2_c1.pos[1]==bluet1m2.pos[1]):
                    print('red nothing')
                else:
                    greenpos = greent1m2.pos
                    redpos = fixedt1m2_c1.pos
                    bluepos = bluet1m2.pos
                    continueRoutine = False
                    print("red forth")

        if ball_hand_box_3.pos[0]==bluet1m2.pos[0] and ball_hand_box_3.pos[1]==bluet1m2.pos[1]:
            if mouse_4.isPressedIn(bart1m2_lefta):
                if (fixedt1m2_a2.pos[0]==greent1m2.pos[0] and fixedt1m2_a2.pos[1]==greent1m2.pos[1]) or (fixedt1m2_a2.pos[0]==redt1m2.pos[0] and fixedt1m2_a2.pos[1]==redt1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_a3.pos
                    continueRoutine = False
                    print("blue 3")
                elif (fixedt1m2_a1.pos[0]==greent1m2.pos[0] and fixedt1m2_a1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_a1.pos[0]==redt1m2.pos[0] and fixedt1m2_a1.pos[1]==redt1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_a2.pos
                    continueRoutine = False
                    print("blue 2")
                else:
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_a1.pos
                    continueRoutine = False
                    print("blue 1")
            if mouse_4.isPressedIn(bart1m2_leftb):
                if(fixedt1m2_b2.pos[0]==greent1m2.pos[0] and fixedt1m2_b2.pos[1]==greent1m2.pos[1]) or (fixedt1m2_b2.pos[0]==redt1m2.pos[0] and fixedt1m2_b2.pos[1]==redt1m2.pos[1]):
                    print('nothing blue')
                elif (fixedt1m2_b1.pos[0]==greent1m2.pos[0] and fixedt1m2_b1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_b1.pos[0]==redt1m2.pos[0] and fixedt1m2_b1.pos[1]==redt1m2.pos[1]):
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_b2.pos
                    continueRoutine = False
                    print("blue second")
                else:
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_b1.pos
                    continueRoutine = False
                    print("blue third")
            elif mouse_4.isPressedIn(bart1m2_leftc):
                if (fixedt1m2_c1.pos[0]==greent1m2.pos[0] and fixedt1m2_c1.pos[1]==greent1m2.pos[1]) or (fixedt1m2_c1.pos[0]==redt1m2.pos[0] and fixedt1m2_c1.pos[1]==redt1m2.pos[1]):
                    print('blue nothing')
                else:
                    greenpos = greent1m2.pos
                    redpos = redt1m2.pos
                    bluepos = fixedt1m2_c1.pos
                    continueRoutine = False
                    print("blue forth")
    TextComponent text_151
      color = black
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter
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    PolygonComponent greent1m2
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos = (-.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos = (-.35,-.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos = (-.587, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_152
      color = black
      letterHeight = 0.025
      pos = (-0.35, 0.18)
      startVal [time (s)] = 0.0
      text = Choose the new position
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  Routine check_step2_t1
    PolygonComponent light_gray_bg_4
      fillColor = #FFFFFF
      fillColorSpace = rgb255
      lineColor = #636363
      shape = regular polygon...
      size = (1.5, .9)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent ball_hand_box_4
      fillColor = #808080
      lineColor = $[-1,-1,-1]
      lineWidth = 4
      pos = (-0.35, 0.3)
      shape = rectangle
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent base_right_4
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_7
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.113, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_8
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent pole_right_9
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (0.587, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent right_green_3
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $right_greenpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_red_3
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 10000
      pos [set every repeat] = $right_redpos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_blue_3
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $right_bluepos_orig
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent base_left_4
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.25)
      shape = rectangle
      size = (0.499, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bart1m2_leftc_2
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.113, -0.17)
      shape = rectangle
      size = (0.025, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_leftb_2
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.35, -0.11)
      shape = rectangle
      size = (0.025, 0.28)
      startVal [time (s)] = 0.0
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    PolygonComponent bart1m2_lefta_2
      fillColor = #A52A2A
      lineColor = #A52A2A
      pos = (-0.587, -.05)
      shape = rectangle
      size = (0.025, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = check_box
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent fixedt1m2_a1_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -0.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a2_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_a3_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.587, 0.05)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b1_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_b2_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.35, -.06)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixedt1m2_c1_2
      fillColor = #808080
      lineColor = #808080
      nVertices = 1000
      opacity = 0
      pos = (-0.113, -.17)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_153
      color = black
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter
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    PolygonComponent greent1m2_2
      fillColor = #00CC33
      lineColor = #00CC33
      nVertices = 1000
      pos [set every repeat] = $greenpos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent redt1m2_2
      fillColor = #FF0000
      lineColor = #FF0000
      nVertices = 1000
      pos [set every repeat] = $redpos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent bluet1m2_2
      fillColor = #0099FF
      lineColor = #0099FF
      nVertices = 1000
      pos [set every repeat] = $bluepos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent check_box
      fillColor = #F0E68C
      lineColor = $[-1,-1,-1]
      lineWidth = 1.5
      nVertices = 1000
      pos = (0, -0.35)
      shape = regular polygon...
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_154
      color = black
      letterHeight = 0.025
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press here
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  Routine check_positions
    CodeComponent code_31
      Code Type = Both
      End JS Routine:
        counter = (counter + 1);
        console.log("check positions");
        console.log(greenpos);
        console.log(redpos);
        console.log(bluepos);
        if ((counter > 0)) {
            if (((greenpos[0] === greenfinal[0]) && (greenpos[1] === greenfinal[1]))) {
                psychoJS.experiment.addData("green_corr", "correct");
                if (((redpos[0] === redfinal[0]) && (redpos[1] === redfinal[1]))) {
                    psychoJS.experiment.addData("red_corr", "correct");
                    if (((bluepos[0] === bluefinal[0]) && (bluepos[1] === bluefinal[1]))) {
                        psychoJS.experiment.addData("blue_corr", "correct");
                        movements.finished = true;
                        bluepos = [];
                        greenpos = [];
                        redpos = [];
                        counter = 0;
                        counter2 = (counter2 + 1);
                    }
                }
            } else {
                /* keep playing */
            }
        }
        end_t1 = timer.getTime();
        timer_t1 = (end_t1 - beginning_t1);
        console.log(timer_t1);
        psychoJS.experiment.addData("timer_end", timer_t1);
        if ((timer_t1 > 120)) {
            movements.finished = true;
            bluepos = [];
            greenpos = [];
            redpos = [];
            counter = 0;
            counter2 = (counter2 + 1);
        }
      End Routine:
        counter = counter + 1
        #greenfinal = [-0.113, -.17]
        #redfinal = [-0.35, -.17]
        #bluefinal = [-0.35, -.06]

        print("check positions")
        print(greenpos)
        print(redpos)
        print(bluepos)

        if counter > 0:
            if greenpos[0] == greenfinal[0] and greenpos[1] == greenfinal[1]:
                if redpos[0] == redfinal[0] and redpos[1] == redfinal[1]:
                    if bluepos[0] == bluefinal[0] and bluepos[1] == bluefinal[1]:
                        movements.finished = True
                        bluepos = []
                        greenpos = []
                        redpos = []
                        counter = 0
                        counter2 = counter2 + 1
            else:
                "keep playing"

        end_t1 = timer.getTime()
        timer_t1 = end_t1 - beginning_t1
        print(timer_t1)
        thisExp.addData('timer_end', timer_t1)
        if timer_t1 > 120:
            movements.finished = True
            bluepos = []
            greenpos = []
            redpos = []
            counter = 0
            counter2 = counter2 + 1
  Routine check_first_round_practice
    CodeComponent code_32
      Code Type = JS
      Begin JS Routine:
        console.log(practice_correct)
        console.log(circle_loop)
      Each JS Frame:
        if ((circle_loop < 3)) {
            if ((practice_correct === 1)) {
                continueRoutine = false;
            }
        }
Flow
  Routine Welcome
  Routine overal_ef_assessment_instructions
  Routine Introduction
  Routine Circles_Example_1
  Routine Circles_Example_2
  Routine Circles_Example_3
  Routine Circle_Example_4
  Routine Initial_Circles
  Routine Circle_Example_5A
  Routine Circle_Example_6
  Routine Circle_Example_7
  Routine Start_Practice
  LoopInitiator Meta_Loop loopType="TrialHandler"
    conditionsFile = Meta_Loop_072418.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Circle_Loop', 'Practice_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Three_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Four_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Five_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Six_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Seven_Circle_trials_072418.xlsx')]),
      OrderedDict([('Circle_Loop', 'All_Eight_Circle_trials_072418.xlsx')])]
    Routine Update_loop
    Routine Check_practice_over
    LoopInitiator Circle_Blocks loopType="TrialHandler"
      conditionsFile = $Circle_Loop
      loopType = random
      nReps = 1
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      Routine check_first_round_practice
      Routine Initial_Circles
      Routine First_Circle_Presentation
      Routine Second_Circle_Presentation
      Routine Third_Circle_Presentation
      Routine Fourth_Circle_Presentation
      Routine Fifth_Circle_Presentation
      Routine Sixth_Circle_Presentation
      Routine Seventh_Circle_Presentation
      Routine Eighth_Circle_Presentation
      Routine Wait_for_First_response
      Routine Wait_for_Second_response
      Routine Wait_for_Third_Response
      Routine Wait_for_Fourth_Response
      Routine Wait_for_Fifth_Response
      Routine Wait_For_Sixth_Response
      Routine Wait_For_Seventh_Response
      Routine Wait_For_Eighth_Response
      Routine Check_outcome
      Routine Blank_Screen
      Routine feedback
      Routine Repeat_Instructions
    LoopTerminator Circle_Blocks
    Routine check_end_experiment
  LoopTerminator Meta_Loop
  Routine Get_Experimenter
  Routine Instructions
  Routine get_ready
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine code_meta
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = three_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('digitSpan', 'practice'), ('digits', 257), ('digits_corr', 752)]),
        OrderedDict([('digitSpan', 'practice'), ('digits', 946), ('digits_corr', 649)])]
      Routine Presentation_practice
      Routine Recall_practice
      Routine feedback_practice
    LoopTerminator practice
    Routine code_end
    Routine repeat_instructions
  LoopTerminator trials_2
  Routine real_trials
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition_file', 'three.xlsx')]),
      OrderedDict([('condition_file', 'four.xlsx')]),
      OrderedDict([('condition_file', 'five.xlsx')]),
      OrderedDict([('condition_file', 'six.xlsx')]),
      OrderedDict([('condition_file', 'seven.xlsx')]),
      OrderedDict([('condition_file', 'eight.xlsx')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Presentation
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
  Routine Welcome_2
  Routine IntroA_2
  Routine IntroB_2
  Routine Example1
  Routine Example2
  Routine Quick_Reminder
  Routine Practice_congruent
  LoopInitiator practice_congruent_1 loopType="TrialHandler"
    conditionsFile = test_practice_congruent.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('Heart', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')])]
    Routine Practice_trial_congruent
    Routine feedback_hf_congruent_1
  LoopTerminator practice_congruent_1
  Routine congruent_reminder
  LoopInitiator practice_congruent_2 loopType="TrialHandler"
    conditionsFile = practice congruent.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('Heart', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Heart', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')])]
    Routine Practice_trial_congruent_2
    Routine feedback_hf_congruent_2
  LoopTerminator practice_congruent_2
  Routine Ready
  LoopInitiator trial_hearts loopType="TrialHandler"
    conditionsFile = block1_Hearts.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 1), ('Hearts', 'leftHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 1), ('Hearts', 'rightHeart.jpg'), ('Image', 'heart'), ('Left_Right', 'right'), ('corAns', 'm')])]
    Routine Hearts
  LoopTerminator trial_hearts
  Routine IntroA_3
  Routine IntroB_3
  Routine Example3
  Routine Example4
  Routine Quick_Reminder_Incongruent
  Routine Practice_Incongruent
  LoopInitiator practice_incongruent_1 loopType="TrialHandler"
    conditionsFile = practice incongruent.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')])]
    Routine Practice_trial_incongruent
    Routine feedback_hf_incongruent_1
  LoopTerminator practice_incongruent_1
  Routine incongruent_reminder
  LoopInitiator practice_incongruent_2 loopType="TrialHandler"
    conditionsFile = practice incongruent.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')])]
    Routine Practice_trial_incongruent_2
    Routine feedback_hf_incongruent_2
  LoopTerminator practice_incongruent_2
  Routine Ready2
  LoopInitiator trial_flowers loopType="TrialHandler"
    conditionsFile = block2_Flowers.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 2), ('Flowers', 'leftFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 2), ('Flowers', 'rightFlower.jpg'), ('Image', 'flower'), ('Left_Right', 'right'), ('corAns', 'z')])]
    Routine Flowers
  LoopTerminator trial_flowers
  Routine IntroA_4
  Routine IntroB_5
  Routine IntroC_11
  Routine IntroC_2
  Routine Quick_Reminder_Mixed
  Routine Practice_mixed
  LoopInitiator practice_mixed_1 loopType="TrialHandler"
    conditionsFile = practice mixed.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'rightHeart.jpg'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'rightFlower.jpg'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'rightFlower.jpg'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'rightHeart.jpg'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')])]
    Routine Practice_trial_mixed
    Routine feedback_hf_mixed_1
  LoopTerminator practice_mixed_1
  Routine reminder_mixed
  LoopInitiator practice_mixed_2 loopType="TrialHandler"
    conditionsFile = practice mixed.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'rightHeart.jpg'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'rightFlower.jpg'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'rightFlower.jpg'), ('Left_Right', 'right'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'rightHeart.jpg'), ('Left_Right', 'right'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 1), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 'practice'), ('TaskSwitch_Type', 0), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')])]
    Routine Practice_trial_mixed_2
    Routine feedback_hf_mixed_2
  LoopTerminator practice_mixed_2
  Routine Ready3
  Routine mixed_first
  LoopInitiator trial_mixed loopType="TrialHandler"
    conditionsFile = block3_Mixed001_random.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'flower'), ('Hearts_Flowers', 'leftFlower.jpg'), ('Left_Right', 'left'), ('corAns', 'm')]),
      OrderedDict([('Block', 3), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 3), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')]),
      OrderedDict([('Block', 3), ('Image', 'heart'), ('Hearts_Flowers', 'leftHeart.jpg'), ('Left_Right', 'left'), ('corAns', 'z')])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
    Routine Mixed
  LoopTerminator trial_mixed
  Routine Thank_You
  Routine welcome
  Routine Instructions_3
  Routine Example
  Routine lets_practice
  LoopInitiator trials_practice_loop loopType="TrialHandler"
    conditionsFile = practice_trials.xlsx
    loopType = random
    nReps = 1
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    Routine trials_practice_2
    Routine feedback_practice_2
  LoopTerminator trials_practice_loop
  Routine ready
  LoopInitiator blocks_2 loopType="TrialHandler"
    conditionsFile = chooseRule.xlsx
    loopType = random
    nReps = 1
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    Routine code_meta_2
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine Trials
      Routine Feedback_2
    LoopTerminator trials_3
    Routine code_end_2
  LoopTerminator blocks_2
  Routine tol_welcome
  Routine tol_explanation
  Routine tol_instructions
  Routine tol_example
  Routine tol_prepractice
  LoopInitiator task_trials loopType="TrialHandler"
    conditionsFile = tol_positions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 'practice'), ('min_moves', 1), ('left_greenpos_orig', [-0.587, -0.17]), ('left_redpos_orig', [-0.587, -0.06]), ('left_bluepos_orig', [-0.35, -0.17]), ('right_greenpos_orig', [0.113, -0.17]), ('right_redpos_orig', [0.587, -0.17]), ('right_bluepos_orig', [0.35, -0.17]), ('greenfinal', [-0.587, -0.17]), ('redfinal', [-0.113, -0.17]), ('bluefinal', [-0.35, -0.17])]),
      OrderedDict([('trial', 'trial_3'), ('min_moves', 3), ('left_greenpos_orig', [-0.587, -0.17]), ('left_redpos_orig', [-0.587, -0.06]), ('left_bluepos_orig', [-0.35, -0.17]), ('right_greenpos_orig', [0.113, -0.17]), ('right_redpos_orig', [0.35, -0.17]), ('right_bluepos_orig', [0.35, -0.06]), ('greenfinal', [-0.587, -0.17]), ('redfinal', [-0.35, -0.17]), ('bluefinal', [-0.35, -0.06])]),
      OrderedDict([('trial', 'trial_5'), ('min_moves', 4), ('left_greenpos_orig', [-0.587, -0.17]), ('left_redpos_orig', [-0.587, -0.06]), ('left_bluepos_orig', [-0.35, -0.17]), ('right_greenpos_orig', [0.35, -0.06]), ('right_redpos_orig', [0.35, -0.17]), ('right_bluepos_orig', [0.113, -0.17]), ('greenfinal', [-0.35, -0.06]), ('redfinal', [-0.35, -0.17]), ('bluefinal', [-0.587, -0.17])]),
      OrderedDict([('trial', 'trial_9'), ('min_moves', 5), ('left_greenpos_orig', [-0.587, -0.17]), ('left_redpos_orig', [-0.587, -0.06]), ('left_bluepos_orig', [-0.35, -0.17]), ('right_greenpos_orig', [0.113, -0.06]), ('right_redpos_orig', [0.35, -0.17]), ('right_bluepos_orig', [0.113, -0.17]), ('greenfinal', [-0.587, -0.06]), ('redfinal', [-0.35, -0.17]), ('bluefinal', [-0.587, -0.17])])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
    Routine tol_next_trial
    LoopInitiator movements loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine first_movement
      Routine check_step1_t1
      Routine second_mov
      Routine check_step2_t1
      Routine check_positions
    LoopTerminator movements
  LoopTerminator task_trials
  Routine End_2
